PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.com/submissions/complete?cc=C1KDRF07
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Incomplete URL = https://app.prolific.com/submissions/complete?cc=CLOW3Z5C
  Monitor = testMonitor
  Resources = ['ressources/cond/chain0.csv', 'ressources/cond/chain1.csv', 'ressources/cond/chain2.csv', 'ressources/cond/chain3.csv', 'ressources/cond/chain4.csv', 'ressources/cond/chain5.csv', 'ressources/cond/chain6.csv', 'ressources/cond/chain7.csv', 'ressources/cond/chain8.csv', 'ressources/cond/chain9.csv', 'ressources/cond/chain10.csv', 'ressources/cond/chain11.csv', 'ressources/cond/chain12.csv', 'ressources/cond/chain13.csv', 'ressources/cond/chain14.csv', 'ressources/cond/chain15.csv', 'ressources/cond/chain16.csv', 'ressources/cond/chain17.csv', 'ressources/cond/chain18.csv', 'ressources/cond/chain19.csv', 'ressources/cond/chain20.csv', 'ressources/cond/chain21.csv', 'ressources/cond/chain22.csv', 'ressources/cond/chain23.csv', 'ressources/cond/chain24.csv', 'ressources/cond/chain25.csv', 'ressources/cond/chain26.csv', 'ressources/cond/chain27.csv', 'ressources/cond/chain28.csv', 'ressources/cond/chain29.csv', 'ressources/cond/chain30.csv', 'ressources/cond/chain31.csv', 'ressources/cond/chain32.csv', 'ressources/cond/chain33.csv', 'ressources/cond/chain34.csv', 'ressources/cond/chain35.csv', 'ressources/cond/chain36.csv', 'ressources/cond/chain37.csv', 'ressources/cond/chain38.csv', 'ressources/cond/chain39.csv', 'ressources/cond/chain40.csv', 'ressources/cond/chain41.csv', 'ressources/cond/chain42.csv', 'ressources/cond/chain43.csv', 'ressources/cond/chain44.csv', 'ressources/cond/chain45.csv', 'ressources/cond/chain46.csv', 'ressources/cond/chain47.csv', 'ressources/cond/chain48.csv', 'ressources/cond/chain49.csv', 'ressources/cond/chain50.csv', 'ressources/cond/chain51.csv', 'ressources/cond/chain52.csv', 'ressources/cond/chain53.csv', 'ressources/cond/chain54.csv', 'ressources/cond/chain55.csv', 'ressources/cond/chain56.csv', 'ressources/cond/chain57.csv', 'ressources/cond/chain58.csv', 'ressources/cond/chain59.csv', 'ressources/cond/chain60.csv', 'ressources/cond/chain61.csv', 'ressources/cond/chain62.csv', 'ressources/cond/chain63.csv', 'ressources/cond/chain64.csv', 'ressources/cond/chain65.csv', 'ressources/cond/chain66.csv', 'ressources/cond/chain67.csv', 'ressources/cond/chain68.csv', 'ressources/cond/chain69.csv', 'ressources/cond/chain70.csv', 'ressources/cond/chain71.csv', 'ressources/cond/chain72.csv', 'ressources/cond/chain73.csv', 'ressources/cond/chain74.csv', 'ressources/cond/chain75.csv', 'ressources/cond/chain76.csv', 'ressources/cond/chain77.csv', 'ressources/cond/chain78.csv', 'ressources/cond/chain79.csv', 'ressources/cond/chain80.csv', 'ressources/cond/chain81.csv', 'ressources/cond/chain82.csv', 'ressources/cond/chain83.csv', 'ressources/cond/chain84.csv', 'ressources/cond/chain85.csv', 'ressources/cond/chain86.csv', 'ressources/cond/chain87.csv', 'ressources/cond/chain88.csv', 'ressources/cond/chain89.csv', 'ressources/cond/chain90.csv', 'ressources/cond/chain91.csv', 'ressources/cond/chain92.csv', 'ressources/cond/chain93.csv', 'ressources/cond/chain94.csv', 'ressources/cond/chain95.csv', 'ressources/cond/chain96.csv', 'ressources/cond/chain97.csv', 'ressources/cond/chain98.csv', 'ressources/cond/chain99.csv', 'ressources/cond/obs0.csv', 'ressources/cond/obs1.csv', 'ressources/cond/obs2.csv', 'ressources/cond/obs3.csv', 'ressources/cond/obs4.csv', 'ressources/cond/obs5.csv', 'ressources/cond/obs6.csv', 'ressources/cond/obs7.csv', 'ressources/cond/obs8.csv', 'ressources/cond/obs9.csv', 'ressources/cond/obs10.csv', 'ressources/cond/obs11.csv', 'ressources/cond/obs12.csv', 'ressources/cond/obs13.csv', 'ressources/cond/obs14.csv', 'ressources/cond/obs15.csv', 'ressources/cond/obs16.csv', 'ressources/cond/obs17.csv', 'ressources/cond/obs18.csv', 'ressources/cond/obs19.csv', 'ressources/cond/obs20.csv', 'ressources/cond/obs21.csv', 'ressources/cond/obs22.csv', 'ressources/cond/obs23.csv', 'ressources/cond/obs24.csv', 'ressources/cond/obs25.csv', 'ressources/cond/obs26.csv', 'ressources/cond/obs27.csv', 'ressources/cond/obs28.csv', 'ressources/cond/obs29.csv', 'ressources/cond/obs30.csv', 'ressources/cond/obs31.csv', 'ressources/cond/obs32.csv', 'ressources/cond/obs33.csv', 'ressources/cond/obs34.csv', 'ressources/cond/obs35.csv', 'ressources/cond/obs36.csv', 'ressources/cond/obs37.csv', 'ressources/cond/obs38.csv', 'ressources/cond/obs39.csv', 'ressources/cond/obs40.csv', 'ressources/cond/obs41.csv', 'ressources/cond/obs42.csv', 'ressources/cond/obs43.csv', 'ressources/cond/obs44.csv', 'ressources/cond/obs45.csv', 'ressources/cond/obs46.csv', 'ressources/cond/obs47.csv', 'ressources/cond/obs48.csv', 'ressources/cond/obs49.csv', 'ressources/cond/obs50.csv', 'ressources/cond/obs51.csv', 'ressources/cond/obs52.csv', 'ressources/cond/obs53.csv', 'ressources/cond/obs54.csv', 'ressources/cond/obs55.csv', 'ressources/cond/obs56.csv', 'ressources/cond/obs57.csv', 'ressources/cond/obs58.csv', 'ressources/cond/obs59.csv', 'ressources/cond/obs60.csv', 'ressources/cond/obs61.csv', 'ressources/cond/obs62.csv', 'ressources/cond/obs63.csv', 'ressources/cond/obs64.csv', 'ressources/cond/obs65.csv', 'ressources/cond/obs66.csv', 'ressources/cond/obs67.csv', 'ressources/cond/obs68.csv', 'ressources/cond/obs69.csv', 'ressources/cond/obs70.csv', 'ressources/cond/obs71.csv', 'ressources/cond/obs72.csv', 'ressources/cond/obs73.csv', 'ressources/cond/obs74.csv', 'ressources/cond/obs75.csv', 'ressources/cond/obs76.csv', 'ressources/cond/obs77.csv', 'ressources/cond/obs78.csv', 'ressources/cond/obs79.csv', 'ressources/cond/obs80.csv', 'ressources/cond/obs81.csv', 'ressources/cond/obs82.csv', 'ressources/cond/obs83.csv', 'ressources/cond/obs84.csv', 'ressources/cond/obs85.csv', 'ressources/cond/obs86.csv', 'ressources/cond/obs87.csv', 'ressources/cond/obs88.csv', 'ressources/cond/obs89.csv', 'ressources/cond/obs90.csv', 'ressources/cond/obs91.csv', 'ressources/cond/obs92.csv', 'ressources/cond/obs93.csv', 'ressources/cond/obs94.csv', 'ressources/cond/obs95.csv', 'ressources/cond/obs96.csv', 'ressources/cond/obs97.csv', 'ressources/cond/obs98.csv', 'ressources/cond/obs99.csv', 'ressources/cond/selection.csv', 'ressources/global_instruction_1.PNG', 'ressources/break.png', 'ressources/obs_instructions_1.PNG', 'ressources/obs_instructions_2.PNG', 'ressources/incorrect.png', 'ressources/consent.png', 'ressources/fail_basket.png', 'ressources/global_instruction_2.PNG', 'ressources/global_instruction_3.PNG', 'ressources/global_instruction_4.PNG', 'ressources/global_instruction_5.PNG', 'ressources/grey_rectangle.png', 'ressources/highlight.png', 'ressources/license.txt', 'ressources/mush0.png', 'ressources/mush1.png', 'ressources/mush2.png', 'ressources/mush3.png', 'ressources/mush3_deact.png', 'ressources/mush4.png', 'ressources/mush5.png', 'ressources/mush6.png', 'ressources/mush7.png', 'ressources/mush8.png', 'ressources/mush9.png', 'ressources/mush9_deact.png', 'ressources/obs_attention_check_step1.png', 'ressources/obs_attention_check_step2.png', 'ressources/p_step1_stim1.png', 'ressources/p_step1_stim1_deact.png', 'ressources/p_step1_stim2.png', 'ressources/p_step1_stim2_deact.png', 'ressources/p_step1_stim3.png', 'ressources/p_step1_stim3_deact.png', 'ressources/p_step1_stim4.png', 'ressources/p_step1_stim4_deact.png', 'ressources/p_step1_tooSlow.png', 'ressources/p_step2_background1.png', 'ressources/p_step2_background1_deact.png', 'ressources/p_step2_background2.png', 'ressources/p_step2_background2_deact.png', 'ressources/p_step2_stim1.png', 'ressources/p_step2_stim2.png', 'ressources/p_step2_tooSlow.png', 'ressources/pl_global_instructions.PNG', 'ressources/pl1_instructions_1.PNG', 'ressources/pl1_instructions_2.PNG', 'ressources/pl1_instructions_3.PNG', 'ressources/pl1_instructions_4.PNG', 'ressources/pl2_instructions.PNG', 'ressources/pl3_instructions.PNG', 'ressources/pl4_instructions.PNG', 'ressources/stake_instructions.png', 'ressources/step1_background.png', 'ressources/step1_background_deact.png', 'ressources/step1_smallGnome_deact.png', 'ressources/step1_stim1.png', 'ressources/step1_stim2.png', 'ressources/step1_stim3.png', 'ressources/step1_stim4.png', 'ressources/step1_stim5.png', 'ressources/step1_stim6.png', 'ressources/step1_stim7.png', 'ressources/step1_stim8.png', 'ressources/step1_tallGnome_deact.png', 'ressources/step2_background1.png', 'ressources/step2_background1_deact.png', 'ressources/step2_background2.png', 'ressources/step2_background2_deact.png', 'ressources/step2_stim1.png', 'ressources/step2_stim2.png', 'ressources/t_instructions_1.PNG', 'ressources/t_instructions_2.PNG', 'ressources/t_mult1_img.png', 'ressources/t_mult5_img.png', 'ressources/t_recording.PNG', 'ressources/t_tooSlow.png', 'training_pairIndex.csv', 'trials_pairIndex.csv', 'pl1.xlsx', 'pl2.xlsx']
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1280, 720]
  colPriority = {'': ''}
  color = 0.0000, 0.0000, 0.0000
  expName = experiment
  keyboardBackend = ioHub
  logging level = data
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Routines
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
  Routine global_setup
    RoutineSettingsComponent global_setup
      saveStartStop = False
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    CodeComponent global_setup_code
      Code Type = JS
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      Before JS Experiment:
        function shuffleArray(array) {
            for (var i = array.length - 1; i > 0; i--) {
                var j = Math.floor(Math.random() * (i + 1));
                var temp = array[i];
                array[i] = array[j];
                array[j] = temp;
            }
        }


        function generateRandomFromGaussian(mean, standardDeviation) {
          let u1, u2;

          // Generate two independent random variables from a uniform distribution in (0, 1)
          do {
            u1 = Math.random();
            u2 = Math.random();
          } while (u1 <= Number.EPSILON); // Ensure u1 is not too close to 0

          // Box-Muller transform to generate random variables from a standard normal distribution
          const z0 = Math.sqrt(-2.0 * Math.log(u1)) * Math.cos(2 * Math.PI * u2);
          // const z1 = Math.sqrt(-2.0 * Math.log(u1)) * Math.sin(2 * Math.PI * u2);

          // Scale and shift to the desired mean and standard deviation
          const result = z0 * standardDeviation + mean;

          return result;
        }


        function getRandomIntInRange(a, b) {
          // Math.floor is used to round down to the nearest integer
          // Math.random() generates a random float between 0 (inclusive) and 1 (exclusive)
          return Math.floor(Math.random() * (b - a + 1)) + a;
        }


        // Function to perform roulette wheel selection on a population
        function rouletteWheelSelection(population) {
          while (true) {
            // Step 1: Select an individual uniformly at random
            const selectedIndex = Math.floor(Math.random() * population.length);
            // Step 2: Accept with probability wi/wmax (score_norm)
            if (Math.random() < population[selectedIndex]["score_norm"]) {
              return population[selectedIndex]["cond_filename"];
            }
            // If not accepted, repeat the process
          }
        }

        function tournamentSelection(population, k) {
            let selectedIndices = new Set();
            let tournament = [];
            while(selectedIndices.size < k) {
                let randomIndex = Math.floor(Math.random() * population.length);
                selectedIndices.add(randomIndex);
            }
            Array.from(selectedIndices).forEach(index => {
                tournament.push(population[index]);
            });
            tournament.sort((a, b) => b.score_norm - a.score_norm);
            return [tournament[0]["cond_filename"], tournament[0]["obs_filename"]];
        }
      Begin JS Experiment:
                // add-on: list(s: string): string[]
                function list(s) {
                    // if s is a string, we return a list of its characters
                    if (typeof s === 'string')
                        return s.split('');
                    else
                        // otherwise we return s:
                        return s;
                }

        // Fetch chain csv


        selection_file = "ressources/cond/selection.csv";

        selectionInfo = new TrialHandler({
                psychoJS: psychoJS,
                nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
                extraInfo: expInfo, originPath: undefined,
                trialList: selection_file,
                seed: undefined, name: 'selectionInfo'
            });

        selectionInfo = selectionInfo.getTrialList()

        k = 4;
        filenames = tournamentSelection(selectionInfo, k)
        cond_filename = "ressources/cond/" + filenames[0]
        obs_filename = "ressources/cond/" + filenames[1]
        // console.log(filename)

        chainInfo = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo, originPath: undefined,
            trialList: cond_filename,
            seed: undefined, name: 'chainInfo'});

        obsInfo = new TrialHandler({
            psychoJS: psychoJS,
            nReps: 1, method: TrialHandler.Method.SEQUENTIAL,
            extraInfo: expInfo, originPath: undefined,
            trialList: obs_filename,
            seed: undefined, name: 'obsInfo'});


        // console.log(chainInfo.getTrialList())

        psychoJS.experiment.addData("parent_PID", chainInfo.trialList[0]["PROLIFIC_PID"]);

        advice = chainInfo.trialList[0]["msg"]

        // console.log(obsInfo.getTrialList().length)


        // global variable setup

        global_counter = 0;
        global_step1_stim_size = [(12 / 34), 0.5];
        global_step1_stimLeft_pos = [(-0.5), 0.09];
        global_step1_stimRight_pos = [0.5, 0.09];
        global_highlight_size = [0.6, 0.75];
        global_step2_highlight_pos = [0, 0.05];
        global_step2_stim_size = [0.4, 0.4];
        global_step2_pos = [0, (- 0.1)];
        global_score = 0;
        global_score_pos = [0.7, 0.4];
        global_score_size = 0.05;
        global_scoreBg_size = [0.3, 0.1];
        global_scoreBg_pos = [0.7, 0.45];
        global_rewardBg_size = [0.4, 0.2];
        global_rewardBg_pos = [0, 0.35];
        p_tooSlow_size = [1.27, 0.5];
        p_tooSlow_pos = [0, 0.5];
        t_tooSlow_size = [0.85, 0.3];
        t_tooSlow_pos = [0, 0.3];
        t_n_trial = 32; //32
        pl_step1_stim_size =  [(9 / 34), 3/8];
        pl_task_stimUp_pos = [0, 0.05];
        pl_step2Bg_size = [9/40, 9/40];
        pl_basket_size = [0.1, 0.1];
        pl_step2LeftBg_pos = [(- 0.5), (- 0.2)];
        pl_step2RightBg_pos = [0.5, (- 0.2)];
        pl2_task_stimLeft_pos = [(- 0.3), 0.1];
        pl2_task_stimRight_pos = [0.3, 0.1];
        pl2_forest_size = [9./30, 9/30];
        pl2_basket_size = [0.15, 0.15];

        show_fail_AC_flag = 0;
        obs_counter = 0;
        obs_score = obsInfo.trialList[0]["globa_score"] - obsInfo.trialList[0]["t_points"];
        obs_n_trial = obsInfo.getTrialList().length;
        obs_attention_check_fail = 0;
        attention_check_flag = 1;
        n_attention_check = 10; // for test, value = 10 for real run
        obs_attention_check_trial = Array.from({ length: obs_n_trial}, (_, i) => i).sort(() => Math.random() - 0.5).slice(0, n_attention_check);
        //obs_attention_check_trial = Array.from({ length: n_attention_check }, () => Math.floor(Math.random() * (obs_n_trial + 1)));
        obs_attention_check_trial_type = Array(n_attention_check/2).fill("step1").concat(Array(n_attention_check/2).fill("step2"));
        shuffleArray(obs_attention_check_trial_type);
        obs_attention_check_counter = 0;
        obs_attention_check_step2_no_answer_flag = 0;
        obs_attention_check_step2_mistake_flag = 0;

        console.log(obs_attention_check_trial);

        pl3_step2LeftBg_pos = [(- 0.5), (0)];
        pl3_step2RightBg_pos = [0.5, (0)];
        pl3_task_stimLeft_pos = [(- 0.5), (0)];
        pl3_task_stimRight_pos = [0.5, (0)];

        p_index = 0;
        p_score = 0;
        p_basket_names = [["p_green_basket", "ressources/p_step2_stim1.png"], ["p_blue_basket", "ressources/p_step2_stim2.png"]];
        shuffleArray(p_basket_names);
        rmin = 0;
        rmax = 9;
        rmean = ((rmax + rmin) / 2);
        high_reward = [5, 5, 5, 5, 6, 6, 6, 6, 7, 7, 7, 7, 8, 8, 8, 8, 9, 9, 9, 9];
        low_reward = [0, 0, 0, 0, 1, 1, 1, 1, 2, 2, 2, 2, 3, 3, 3, 3, 4, 4, 4, 4];
        l_reward = [high_reward, low_reward];
        shuffleArray(l_reward);
        p_step2_stim1 = {"name": "p_yellow_forest", "file": "ressources/p_step2_background1.png", "deact_file": "ressources/p_step2_background1_deact.png", "basket_name": p_basket_names[0][0], "basket_file": p_basket_names[0][1], "reward": l_reward[0]}
        p_step2_stim2 = {"name": "p_green_forest", "file": "ressources/p_step2_background2.png", "deact_file": "ressources/p_step2_background2_deact.png", "basket_name": p_basket_names[1][0], "basket_file": p_basket_names[1][1], "reward": l_reward[1]}
        p_step1_stim1 = {"name": "p_pink_gnome", "file": "ressources/p_step1_stim1.png", "reward": undefined, "step2": undefined, "pair": undefined, "deact_file": "ressources/p_step1_stim1_deact.png"}
        p_step1_stim2 = {"name": "p_blue_gnome", "file": "ressources/p_step1_stim2.png", "reward": undefined, "step2": undefined, "pair": undefined, "deact_file": "ressources/p_step1_stim2_deact.png"}
        p_step1_stim3 = {"name": "p_green_gnome", "file": "ressources/p_step1_stim3.png", "reward": undefined, "step2": undefined, "pair": undefined, "deact_file": "ressources/p_step1_stim3_deact.png"}
        p_step1_stim4 = {"name": "p_orange_gnome", "file": "ressources/p_step1_stim4.png", "reward": undefined, "step2": undefined, "pair": undefined, "deact_file": "ressources/p_step1_stim4_deact.png"}
        l_p_step1_stims = [p_step1_stim1, p_step1_stim2, p_step1_stim3, p_step1_stim4];
        l_p_step2_stims = [p_step2_stim1, p_step2_stim2];
        pair_num = [1, 1, 2, 2];
        shuffleArray(l_p_step1_stims);
        i = 0;
        for (var p_step1_stim, _pj_c = 0, _pj_a = l_p_step1_stims, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            p_step1_stim = _pj_a[_pj_c];
            p_step1_stim["pair"] = pair_num[i];
            if (((i === 0) || (i === 2))) {
                p_step1_stim["step2"] = l_p_step2_stims[0];
            } else {
                p_step1_stim["step2"] = l_p_step2_stims[1];
            }
            p_step1_stim["reward"] = p_step1_stim["step2"]["reward"];
            i += 1;
        }

        rmin = 0;
        rmax = 9;
        rmean = ((rmax + rmin) / 2);
        high_reward = getRandomIntInRange(Math.ceil(rmean), rmax);
        low_reward = getRandomIntInRange(rmin, Math.floor(rmean));
        l_reward = [high_reward, low_reward];
        shuffleArray(l_reward);

        t_step2_stim1 = {
            "name": "bright_forest",
            "file": "ressources/step2_background1.png",
            "deact_file": "ressources/step2_background1_deact.png",
            "basket_name": chainInfo.trialList[0]["bright_forest_basket_name"],
            "basket_file": chainInfo.trialList[0]["bright_forest_basket_file"],
            "reward": l_reward[0]
            }
        t_step2_stim2 = {
            "name": "dark_forest",
            "file": "ressources/step2_background2.png",
            "deact_file": "ressources/step2_background2_deact.png",
            "basket_name": chainInfo.trialList[0]["dark_forest_basket_name"],
            "basket_file": chainInfo.trialList[0]["dark_forest_basket_file"],
            "reward": l_reward[1]
            }

        t_step1_stim1 = {"name": chainInfo.trialList[0]["stim1_name"], "file": chainInfo.trialList[0]["stim1_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim1_pair"], "deact_file": chainInfo.trialList[0]["stim1_deact_file"]}
        t_step1_stim2 = {"name": chainInfo.trialList[0]["stim2_name"], "file": chainInfo.trialList[0]["stim2_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim2_pair"], "deact_file": chainInfo.trialList[0]["stim2_deact_file"]}
        t_step1_stim3 = {"name": chainInfo.trialList[0]["stim3_name"], "file": chainInfo.trialList[0]["stim3_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim3_pair"], "deact_file": chainInfo.trialList[0]["stim3_deact_file"]}
        t_step1_stim4 = {"name": chainInfo.trialList[0]["stim4_name"], "file": chainInfo.trialList[0]["stim4_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim4_pair"], "deact_file": chainInfo.trialList[0]["stim4_deact_file"]}
        t_step1_stim5 = {"name": chainInfo.trialList[0]["stim5_name"], "file": chainInfo.trialList[0]["stim5_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim5_pair"], "deact_file": chainInfo.trialList[0]["stim5_deact_file"]}
        t_step1_stim6 = {"name": chainInfo.trialList[0]["stim6_name"], "file": chainInfo.trialList[0]["stim6_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim6_pair"], "deact_file": chainInfo.trialList[0]["stim6_deact_file"]}
        t_step1_stim7 = {"name": chainInfo.trialList[0]["stim7_name"], "file": chainInfo.trialList[0]["stim7_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim7_pair"], "deact_file": chainInfo.trialList[0]["stim7_deact_file"]}
        t_step1_stim8 = {"name": chainInfo.trialList[0]["stim8_name"], "file": chainInfo.trialList[0]["stim8_file"], "reward": undefined, "step2": undefined, "pair": chainInfo.trialList[0]["stim8_pair"], "deact_file": chainInfo.trialList[0]["stim8_deact_file"]}


        l_t_step1_stims = [t_step1_stim1, t_step1_stim2, t_step1_stim3, t_step1_stim4, t_step1_stim5, t_step1_stim6, t_step1_stim7, t_step1_stim8];
        l_t_step2_stims = [t_step2_stim1, t_step2_stim2];

        if ((chainInfo.trialList[0]["stim1_step2_name"] == "bright_forest")) {
            t_step1_stim1["step2"] = t_step2_stim1;
            } else {
            t_step1_stim1["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim2_step2_name"] == "bright_forest")) {
            t_step1_stim2["step2"] = t_step2_stim1;
            } else {
            t_step1_stim2["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim3_step2_name"] == "bright_forest")) {
            t_step1_stim3["step2"] = t_step2_stim1;
            } else {
            t_step1_stim3["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim4_step2_name"] == "bright_forest")) {
            t_step1_stim4["step2"] = t_step2_stim1;
            } else {
            t_step1_stim4["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim5_step2_name"] == "bright_forest")) {
            t_step1_stim5["step2"] = t_step2_stim1;
            } else {
            t_step1_stim5["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim6_step2_name"] == "bright_forest")) {
            t_step1_stim6["step2"] = t_step2_stim1;
            } else {
            t_step1_stim6["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim7_step2_name"] == "bright_forest")) {
            t_step1_stim7["step2"] = t_step2_stim1;
            } else {
            t_step1_stim7["step2"] = t_step2_stim2;
            }

        if ((chainInfo.trialList[0]["stim8_step2_name"] == "bright_forest")) {
            t_step1_stim8["step2"] = t_step2_stim1;
            } else {
            t_step1_stim8["step2"] = t_step2_stim2;
            }

        p_points = null;
        p_step1_choice = {"name": null, "file": null, "basket_name": null, "basket_file": null, "reward": null};
        p_step2_stim_var = {"name": null, "file": null, "basket_name": null, "basket_file": null, "reward": null};
        t_points = null;
        t_step1_choice = {"name": null, "file": null, "basket_name": null, "basket_file": null, "reward": null};
        t_step2_stim_var = {"name": null, "file": null, "basket_name": null, "basket_file": null, "reward": null};
        p_step1_stimLeft_file = "ressources/mush0.png";
        p_step1_stimRight_file = "ressources/mush0.png";
        p_step2_stimBg_file = "ressources/mush0.png";
        p_step2_stimBasket_file = "ressources/mush0.png";

        pl1_index = 0;
        pl1_task_index = [0, 1];
        shuffleArray(pl1_task_index);
        pl1_task_step2LeftStim_var = l_t_step2_stims[pl1_task_index[0]];
        pl1_task_step2RightStim_var = l_t_step2_stims[pl1_task_index[1]];
        stim_num = 1;
        for (var i, _pj_c = 0, _pj_a = l_t_step1_stims, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_name"), i["name"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_file"), i["file"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_pair"), i["pair"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_deact_file"), i["deact_file"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_step2_name"), i["step2"]["name"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_step2_file"), i["step2"]["file"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_step2_basket_name"), i["step2"]["basket_name"]);
            psychoJS.experiment.addData((("stim" + stim_num.toString()) + "_step2_basket_file"), i["step2"]["basket_file"]);
            stim_num += 1;
        }

        psychoJS.experiment.addData("obs_AC_trials", obs_attention_check_trial);
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  Routine t_setup
    RoutineSettingsComponent t_setup
      saveStartStop = False
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    CodeComponent t_setup_code
      Code Type = JS
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      Begin JS Routine:
        t_step2_flag = 0;
        t_reward_flag = 0;
        t_failStep1_flag = 0;
        t_failStep2_flag = 0;
        t_points = 0;
        t_step1_pair = [];
        t_break_flag = 0;
        stim = 0;
        // next is to ensure that the data collection is not stuck on previous trials
        t_step1_choice = "";
        t_step2_stim = "";
        t_step2_basket = "";

        t_mult_img = (("ressources/t_mult" + t_mult.toString() + "_img.png"));

        for (var i=0; i < l_t_step1_stims.length; i++){
            stim = l_t_step1_stims[i];
            console.log(stim);
            if (stim["pair"] === pair_index) {
                t_step1_pair.push(stim);
            }
        }



        console.log(t_step1_pair);

        shuffleArray(t_step1_pair);
        t_step1_stimLeft_var = t_step1_pair[0];
        t_step1_stimRight_var = t_step1_pair[1];

        t_step1_deact_img = "ressources/mush0.jpg";

        t_step1_stimRight_file = t_step1_stimRight_var["file"];
        t_step1_stimLeft_file = t_step1_stimLeft_var["file"];
        t_step1_stimRightDeact_file = t_step1_stimRight_var["deact_file"];
        t_step1_stimLeftDeact_file = t_step1_stimLeft_var["deact_file"];

        //IMG SETUP

        t_stake_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_stake_img', units : 'norm',
            image : t_mult_img, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [0.32, 0.55],
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        t_step1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step1_bg_img', units : 'norm',
            image : 'ressources/step1_background.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        t_step1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step1_leftStim_img', units : undefined,
            image : t_step1_stimLeft_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        t_step1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step1_rightStim_img', units : undefined,
            image : t_step1_stimRight_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        t_step1_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step1_highlight_img', units : 'height',
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : undefined, size : global_highlight_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        t_step1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });

        t_step1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_step1_score_txt',
            text: "SCORE: " + global_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });

        // recording

        t_recording_flag = 0;
        if (global_counter === 176){
            t_recording_flag = 1;
        }

        global_counter = global_counter + 1;
  Routine t_step1
    RoutineSettingsComponent t_step1
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent t_step1_code
      Code Type = JS
      End JS Routine:
        if (_t_step1_keyresp_allKeys.length > 0) {
            t_step2_flag = 1;
            if ((t_step1_keyresp.keys === "s")) {
                t_step1_choice = t_step1_stimLeft_var;
            } else {
                t_step1_choice = t_step1_stimRight_var;
            }
            t_step2_stim_var = t_step1_choice["step2"];
            t_step2_stimBg_file = t_step2_stim_var["file"];
            t_step2_stimBg_deact_file = t_step2_stim_var["deact_file"];
            t_step2_stimBasket_file = t_step2_stim_var["basket_file"];
            t_points = t_step2_stim_var["reward"] * t_mult;
            if ((t_points === 0)) {
                t_reward_trialPoints_txt = "0";
            } else {
                t_reward_trialPoints_txt = ("+" + t_points.toString());
            }
        } else {
            t_failStep1_flag = 1;
        }
    CodeComponent t_step1_image_code
      Code Type = JS
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      Begin JS Routine:
        t_step1_bg_img.setAutoDraw(true);
        t_step1_leftStim_img.setAutoDraw(true);
        t_step1_rightStim_img.setAutoDraw(true);
        t_step1_scoreBg_img.setAutoDraw(true);
        t_step1_score_txt.setAutoDraw(true);
      Each JS Frame:
        if (_t_step1_keyresp_allKeys.length > 0) {
            if ((t_step1_keyresp.keys === "s")) {
                t_step1_highlight_img.setPos([(-0.5), 0.19]);
                t_step1_rightStim_img.setImage(t_step1_stimRightDeact_file);
                t_step1_highlight_img.setAutoDraw(true);
                t_step1_rightStim_img.setAutoDraw(true);
            } else {
                t_step1_highlight_img.setPos([0.5, 0.19]);
                t_step1_leftStim_img.setImage(t_step1_stimLeftDeact_file);
                t_step1_highlight_img.setAutoDraw(true);
                t_step1_leftStim_img.setAutoDraw(true);
            }
        }
      End JS Routine:
        t_step1_bg_img.setAutoDraw(false);
        t_step1_leftStim_img.setAutoDraw(false);
        t_step1_rightStim_img.setAutoDraw(false);
        t_step1_highlight_img.setAutoDraw(false);
        t_step1_scoreBg_img.setAutoDraw(false);
        t_step1_score_txt.setAutoDraw(false);

        //STEP2

        t_step2_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step2_bg_img', units : 'norm',
            image : t_step2_stimBg_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
          });

        t_step2_keyresp = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        t_step2_stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step2_stim_img', units : 'height',
            image : t_step2_stimBasket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        t_step2_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step2_highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        t_step2_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_step2_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        t_step2_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_step2_score_txt',
            text: 'SCORE: ' + global_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });

        //FAILSTEP1

        t_failStep1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep1_bg_img', units : 'norm',
            image : 'ressources/step1_background_deact.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        t_failStep1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep1_leftStim_img', units : undefined,
            image : t_step1_stimLeftDeact_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        t_failStep1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep1_rightStim_img', units : undefined,
            image : t_step1_stimRightDeact_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        t_failStep1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        t_failStep1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_fail_score_txt',
            text: 'SCORE: ' + global_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -4.0
        });

        //FAILSTEP2

        t_failStep2_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep2_bg_img', units : 'norm',
            image : t_step2_stimBg_deact_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
          });

        t_failStep2_stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep2_stim_img', units : 'height',
            image : 'ressources/fail_basket.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        t_failStep2_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_failStep2_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        t_failStep2_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_failStep2_score_txt',
            text: 'SCORE: ' + global_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -3.0
         });


        t_fail_tooSlow_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_fail_tooSlow_img', units : undefined,
            image : 'ressources/t_tooSlow.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : t_tooSlow_pos, size : t_tooSlow_size,
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });
    KeyboardComponent t_step1_keyresp
      allowedKeys = 's','k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
      syncScreenRefresh = False
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  Routine t_step2
    RoutineSettingsComponent t_step2
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent t_step2_code
      Code Type = JS
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      End JS Routine:
        if ((t_step2_keyresp.keys === "space")) {
            t_reward_flag = 1;
            global_score = (global_score + t_points);
        } else {
            t_failStep2_flag = 1;
            t_points = 0;
        }
    CodeComponent t_step2_image_code
      Code Type = JS
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      Begin JS Routine:
        t_step2_bg_img.setAutoDraw(true);
        t_step2_stim_img.setAutoDraw(true);
        t_step2_scoreBg_img.setAutoDraw(true);
        t_step2_score_txt.setAutoDraw(true);
      Each JS Frame:
        if (_t_step2_keyresp_allKeys.length > 0) {
            t_step2_highlight_img.setAutoDraw(true);
        }
      End JS Routine:
        t_step2_bg_img.setAutoDraw(false);
        t_step2_stim_img.setAutoDraw(false);
        t_step2_highlight_img.setAutoDraw(false);
        t_step2_scoreBg_img.setAutoDraw(false);
        t_step2_score_txt.setAutoDraw(false);

        r_points = t_points / t_mult;

        //REWARD

        t_reward_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_bg_img', units : 'norm',
            image : t_step2_stimBg_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        t_reward_step2Stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_step2Stim_img', units : 'height',
            image : t_step2_stimBasket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        t_reward_step2Highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_step2Highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        t_reward_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        t_reward_rewardAmount_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_reward_rewardAmount_txt',
            text: t_reward_trialPoints_txt,
            font: 'Open Sance',
            units: undefined,
            pos: [0, 0.35], height: 0.25,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -4.0
        });

        t_reward_rewardAmountBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_rewardAmountBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : global_rewardBg_pos, size : global_rewardBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.6,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        t_reward_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_reward_score_txt',
            text: "SCORE: " + global_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });

        t_reward_mushroom_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_mushroom_img', units : undefined,
            image : (("ressources/mush" + r_points.toString()) + ".png"),
            mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [0, 0.2], size : [0.5, 0.5],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -7.0
        });
    KeyboardComponent t_step2_keyresp
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      syncScreenRefresh = False
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  Routine t_reward
    RoutineSettingsComponent t_reward
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent t_reward_code
      Code Type = JS
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      Begin JS Routine:
        t_reward_mushroom_var = (("ressources/mush" + r_points.toString()) + ".png");
    CodeComponent t_reward_image_code
      Code Type = JS
      Begin JS Routine:
        t_reward_bg_img.setAutoDraw(true);
        t_reward_step2Stim_img.setAutoDraw(true);
        t_reward_step2Highlight_img.setAutoDraw(true);
        t_reward_scoreBg_img.setAutoDraw(true);
        t_reward_rewardAmountBg_img.setAutoDraw(true);
        t_reward_rewardAmount_txt.setAutoDraw(true);
        t_reward_score_txt.setAutoDraw(true);
        t_reward_mushroom_img.setAutoDraw(true);
      End JS Routine:
        t_reward_bg_img.setAutoDraw(false);
        t_reward_step2Stim_img.setAutoDraw(false);
        t_reward_step2Highlight_img.setAutoDraw(false);
        t_reward_scoreBg_img.setAutoDraw(false);
        t_reward_rewardAmountBg_img.setAutoDraw(false);
        t_reward_rewardAmount_txt.setAutoDraw(false);
        t_reward_score_txt.setAutoDraw(false);
        t_reward_mushroom_img.setAutoDraw(false);
    TextComponent t_reward_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine t_data
    RoutineSettingsComponent t_data
      saveStartStop = False
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    CodeComponent t_data_code
      Code Type = JS
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      Begin JS Routine:
        psychoJS.experiment.addData("t_step1_pair_index", pair_index);
        psychoJS.experiment.addData("t_step1_stimLeft_name", t_step1_stimLeft_var["name"]);
        psychoJS.experiment.addData("t_step1_stimLeft_pair", t_step1_stimLeft_var["pair"]);
        psychoJS.experiment.addData("t_step1_stimLeft_reward", t_step1_stimLeft_var["step2"]["reward"]);
        psychoJS.experiment.addData("t_step1_stimLeft_step2Stim", t_step1_stimLeft_var["step2"]["name"]);
        psychoJS.experiment.addData("t_step1_stimLeft_step2Basket", t_step1_stimLeft_var["step2"]["basket_name"]);
        psychoJS.experiment.addData("t_step1_stimRight_name", t_step1_stimRight_var["name"]);
        psychoJS.experiment.addData("t_step1_stimRight_pair", t_step1_stimRight_var["pair"]);
        psychoJS.experiment.addData("t_step1_stimRight_reward", t_step1_stimRight_var["step2"]["reward"]);
        psychoJS.experiment.addData("t_step1_stimRight_step2Stim", t_step1_stimRight_var["step2"]["name"]);
        psychoJS.experiment.addData("t_step1_stimRight_step2Basket", t_step1_stimRight_var["step2"]["basket_name"]);
        psychoJS.experiment.addData("t_points", t_points);
        psychoJS.experiment.addData("t_mult", t_mult);
        psychoJS.experiment.addData("t_fail_step1", t_failStep1_flag);
        psychoJS.experiment.addData("t_fail_step2", t_failStep2_flag);
        psychoJS.experiment.addData("t_reward_flag", t_reward_flag);
        psychoJS.experiment.addData("t_step1_choice", t_step1_choice["name"]);
        psychoJS.experiment.addData("t_step2_stim", t_step2_stim_var["name"]);
        psychoJS.experiment.addData("t_step2_basket", t_step2_stim_var["basket_name"]);
        psychoJS.experiment.addData("globa_score", global_score);

        //half break
        if ((t_n_trial*4 == trials.thisN+1)) { //*4 for number of pair (fullRandom trial, for 256 trial, 32*4=128)
                t_break_flag = 1;
            }

        //first quarter break
        if ((t_n_trial*2 == trials.thisN+1)) { //*2 for number of pair (fullRandom trial, for 256 trial, 32*2=64)
                t_break_flag = 1;
            }

        //third quarter break
        if ((t_n_trial*6 == trials.thisN+1)) { //*6 for number of pair (fullRandom trial, for 256 trial, 32*6=192)
                t_break_flag = 1;
            }
      End JS Routine:
        t_data_stimWalk0 = Math.round(generateRandomFromGaussian(0, 2));
        t_data_stimWalk1 = Math.round(generateRandomFromGaussian(0, 2));
        l_t_data_stimWalk = [t_data_stimWalk0, t_data_stimWalk1];
        for (var i, _pj_c = 0, _pj_a = util.range(l_t_step2_stims.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            stim = l_t_step2_stims[i];
            stim["reward"] += l_t_data_stimWalk[i];
            stim["reward"] = Math.min(stim["reward"], Math.max(9*2 - stim["reward"], 0));
            stim["reward"] = Math.max(stim["reward"], Math.min(0*2 - stim["reward"], 9));
        }
        psychoJS.experiment.addData("t_data_stimWalk0", t_data_stimWalk0);
        psychoJS.experiment.addData("t_data_stimWalk1", t_data_stimWalk1);
  Routine t_failStep1
    RoutineSettingsComponent t_failStep1
      saveStartStop = False
      stopVal [duration (s)] = 1
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    CodeComponent t_failStep1_image_code
      Code Type = JS
      Begin JS Routine:
        t_failStep1_bg_img.setAutoDraw(true);
        t_failStep1_leftStim_img.setAutoDraw(true);
        t_failStep1_rightStim_img.setAutoDraw(true);
        t_failStep1_scoreBg_img.setAutoDraw(true);
        t_failStep1_score_txt.setAutoDraw(true);
        t_fail_tooSlow_img.setAutoDraw(true);
      End JS Routine:
        t_failStep1_bg_img.setAutoDraw(false);
        t_failStep1_leftStim_img.setAutoDraw(false);
        t_failStep1_rightStim_img.setAutoDraw(false);
        t_failStep1_scoreBg_img.setAutoDraw(false);
        t_failStep1_score_txt.setAutoDraw(false);
        t_fail_tooSlow_img.setAutoDraw(false);
    TextComponent t_failStep1_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine t_failStep2
    RoutineSettingsComponent t_failStep2
      saveStartStop = False
      stopVal [duration (s)] = 1
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    CodeComponent t_failStep2_image_code
      Code Type = JS
      Begin JS Routine:
        t_failStep2_bg_img.setAutoDraw(true);
        t_failStep2_stim_img.setAutoDraw(true);
        t_failStep2_scoreBg_img.setAutoDraw(true);
        t_failStep2_score_txt.setAutoDraw(true);
        t_fail_tooSlow_img.setAutoDraw(true);
      End JS Routine:
        t_failStep2_bg_img.setAutoDraw(false);
        t_failStep2_stim_img.setAutoDraw(false);
        t_failStep2_scoreBg_img.setAutoDraw(false);
        t_failStep2_score_txt.setAutoDraw(false);
        t_fail_tooSlow_img.setAutoDraw(false);
    TextComponent t_failStep2_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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
  Routine p_setup
    RoutineSettingsComponent p_setup
      saveStartStop = False
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    CodeComponent p_setup_code
      Code Type = JS
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      Begin JS Routine:
        p_step2_flag = 0;
        p_reward_flag = 0;
        p_failStep1_flag = 0;
        p_failStep2_flag = 0;
        p_points = 0;
        p_step1_pair = [];
        stim = 0;
        r_points = 0;

        p_mult_img = (("ressources/t_mult" + p_mult.toString() + "_img.png"));

        for (var i=0; i < l_p_step1_stims.length; i++){
            stim = l_p_step1_stims[i];
            if (stim["pair"] === pair_index) {
                p_step1_pair.push(stim);
            };
        };
        shuffleArray(p_step1_pair);
        p_step1_stimRight_var = p_step1_pair[0];
        p_step1_stimLeft_var = p_step1_pair[1];

        p_step1_deact_img = "ressources/mush0.jpg";

        p_step1_stimRight_file = p_step1_stimRight_var["file"];
        p_step1_stimLeft_file = p_step1_stimLeft_var["file"];
        p_step1_stimRightDeact_file = p_step1_stimRight_var["deact_file"];
        p_step1_stimLeftDeact_file = p_step1_stimLeft_var["deact_file"];

        //IMG

        p_stake_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_stake_img', units : 'norm',
            image : p_mult_img, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [0.32, 0.55],
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        p_step1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_bg_img', units : 'norm',
            image : 'ressources/step1_background.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        p_step1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_leftStim_img', units : undefined,
            image : p_step1_stimLeft_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        p_step1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_rightStim_img', units : undefined,
            image : p_step1_stimRight_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        p_step1_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_highlight_img', units : 'height',
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : undefined, size : global_highlight_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        p_step1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });

        p_step1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_step1_score_txt',
            text: "SCORE: " + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });
    CodeComponent p_setup_image_code
      Code Type = JS
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      Begin JS Routine:
        p_step1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_bg_img', units : 'norm',
            image : 'ressources/step1_background.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });


        p_step1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_leftStim_img', units : undefined,
            image : p_step1_stimLeft_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        p_step1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_rightStim_img', units : undefined,
            image : p_step1_stimRight_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        p_step1_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_highlight_img', units : 'height',
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : undefined, size : global_highlight_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        p_step1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });

        p_step1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_step1_score_txt',
            text: "SCORE: " + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });
  Routine p_step1
    RoutineSettingsComponent p_step1
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent p_step1_code
      Code Type = JS
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      End JS Routine:
        if (_p_step1_keyresp_allKeys.length > 0) {
            p_step2_flag = 1;
            if ((p_step1_keyresp.keys === "s")) {
                p_step1_choice = p_step1_stimLeft_var;
            } else {
                p_step1_choice = p_step1_stimRight_var;
            }
            p_step2_stim_var = p_step1_choice["step2"];
            p_step2_stimBg_deact_file = p_step2_stim_var["deact_file"];
            p_step2_stimBg_file = p_step2_stim_var["file"];
            p_step2_stimBasket_file = p_step2_stim_var["basket_file"];
            p_points = p_step1_choice["reward"][p_index];
            p_points = p_step1_choice["reward"][p_index] * p_mult;
            if ((p_points === 0)) {
                p_reward_trialPoints_txt = "0";
            } else {
                p_reward_trialPoints_txt = ("+" + p_points.toString());
            }
        } else {
            p_failStep1_flag = 1;
        }
    CodeComponent p_step1_image_code
      Code Type = JS
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      Begin JS Routine:
        p_step1_bg_img.setAutoDraw(true);
        p_step1_leftStim_img.setAutoDraw(true);
        p_step1_rightStim_img.setAutoDraw(true);
        p_step1_scoreBg_img.setAutoDraw(true);
        p_step1_score_txt.setAutoDraw(true);
      Each JS Frame:
        if (_p_step1_keyresp_allKeys.length > 0) {
            if ((p_step1_keyresp.keys === "s")) {
                p_step1_highlight_img.setPos([(-0.5), 0.19]);
                p_step1_rightStim_img.setImage(p_step1_stimRightDeact_file);
                p_step1_highlight_img.setAutoDraw(true);
                p_step1_rightStim_img.setAutoDraw(true);
            } else {
                p_step1_highlight_img.setPos([0.5, 0.19]);
                p_step1_leftStim_img.setImage(p_step1_stimLeftDeact_file);
                p_step1_highlight_img.setAutoDraw(true);
                p_step1_leftStim_img.setAutoDraw(true);
            }
        }
      End JS Routine:
        p_step1_bg_img.setAutoDraw(false);
        p_step1_leftStim_img.setAutoDraw(false);
        p_step1_rightStim_img.setAutoDraw(false);
        p_step1_highlight_img.setAutoDraw(false);
        p_step1_score_txt.setAutoDraw(false);
        p_step1_scoreBg_img.setAutoDraw(false);

        //STEP2

        p_step2_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step2_bg_img', units : 'norm',
            image : p_step2_stimBg_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
          });

        p_step2_keyresp = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        p_step2_stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step2_stim_img', units : 'height',
            image : p_step2_stimBasket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });
        p_step2_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step2_highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        p_step2_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_step2_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        p_step2_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_step2_score_txt',
            text: 'SCORE: ' + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });

        //FAILSTEP1

        p_failStep1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_bg_img', units : 'norm',
            image : 'ressources/step1_background_deact.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        p_failStep1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_leftStim_img', units : undefined,
            image : p_step1_stimLeftDeact_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        p_failStep1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_rightStim_img', units : undefined,
            image : p_step1_stimRightDeact_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        p_failStep1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        p_failStep1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_fail_score_txt',
            text: 'SCORE: ' + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -4.0
        });

        p_failStep1_tooSlow_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_tooSlow_img', units : undefined,
            image : 'ressources/p_step1_tooSlow.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : p_tooSlow_pos, size : p_tooSlow_size,
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        //FAILSTEP2

        p_failStep2_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep2_bg_img', units : 'norm',
            image : p_step2_stimBg_deact_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
          });

        p_failStep2_stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep2_stim_img', units : 'height',
            image : 'ressources/fail_basket.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        p_failStep2_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep2_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        p_failStep2_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_failStep2_score_txt',
            text: 'SCORE: ' + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -3.0
         });

         p_failStep2_tooSlow_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_failStep1_tooSlow_img', units : undefined,
            image : 'ressources/p_step2_tooSlow.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : p_tooSlow_pos, size : p_tooSlow_size,
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });
    KeyboardComponent p_step1_keyresp
      allowedKeys = 's','k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      store = first key
      syncScreenRefresh = False
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  Routine p_step2
    RoutineSettingsComponent p_step2
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent p_step2_code
      Code Type = Both
      Each Frame:
        if len(p_step2_keyresp.keys) > 0:
            p_step2_highlight_img.setAutoDraw(True)
      Each JS Frame:
        if (_p_step2_keyresp_allKeys.length > 0) {
            p_step2_highlight_img.setAutoDraw(true);
        }
      End JS Routine:
        if ((p_step2_keyresp.keys === "space")) {
            p_reward_flag = 1;
            p_score = (p_score + p_points);
        } else {
            p_failStep2_flag = 1;
            p_points = 0;
        }
      End Routine:
        if p_step2_keyresp.keys=="space":
            p_reward_flag = 1
            p_score = (p_score + p_points)
        else:
            p_failStep2_flag = 1
            p_points = 0

        r_points = p_points / p_mult;
    CodeComponent p_step2_image_code
      Code Type = JS
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      Begin JS Routine:
        p_step2_bg_img.setAutoDraw(true);
        p_step2_stim_img.setAutoDraw(true);
        p_step2_scoreBg_img.setAutoDraw(true);
        p_step2_score_txt.setAutoDraw(true);
      End JS Routine:
        p_step2_stim_img.setAutoDraw(false);
        p_step2_highlight_img.setAutoDraw(false);
        p_step2_bg_img.setAutoDraw(false);
        p_step2_scoreBg_img.setAutoDraw(false);
        p_step2_score_txt.setAutoDraw(false);

        r_points = p_points / p_mult;

        //REWARD

        p_reward_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_bg_img', units : 'norm',
            image : p_step2_stimBg_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        p_reward_step2Stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_step2Stim_img', units : 'height',
            image : p_step2_stimBasket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        p_reward_step2Highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_step2Highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        p_reward_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        p_reward_rewardAmount_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_reward_rewardAmount_txt',
            text: p_reward_trialPoints_txt,
            font: 'Open Sans',
            units: undefined,
            pos: [0, 0.35], height: 0.25,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -4.0
        });

        p_reward_rewardAmountBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_rewardAmountBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : global_rewardBg_pos, size : global_rewardBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.6,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        p_reward_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'p_reward_score_txt',
            text: "SCORE: " + p_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });

        p_reward_mushroom_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'p_reward_mushroom_img', units : undefined,
            image : (("ressources/mush" + r_points.toString()) + ".png"),
            mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [0, 0.2], size : [0.5, 0.5],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -7.0
        });
    KeyboardComponent p_step2_keyresp
      allowedKeys = 'space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      syncScreenRefresh = False
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  Routine p_reward
    RoutineSettingsComponent p_reward
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent p_reward_updateScore_code
      Code Type = JS
      Begin JS Routine:
        p_reward_mushroom_var = (("ressources/mush" + r_points.toString()) + ".png");
    CodeComponent p_reward_image_code
      Code Type = Both
      Begin JS Routine:
        p_reward_bg_img.setAutoDraw(true);
        p_reward_step2Stim_img.setAutoDraw(true);
        p_reward_step2Highlight_img.setAutoDraw(true);
        p_reward_scoreBg_img.setAutoDraw(true);
        p_reward_rewardAmountBg_img.setAutoDraw(true);
        p_reward_rewardAmount_txt.setAutoDraw(true);
        p_reward_score_txt.setAutoDraw(true);
        p_reward_mushroom_img.setAutoDraw(true);
      End JS Routine:
        p_reward_bg_img.setAutoDraw(false);
        p_reward_step2Stim_img.setAutoDraw(false);
        p_reward_step2Highlight_img.setAutoDraw(false);
        p_reward_scoreBg_img.setAutoDraw(false);
        p_reward_rewardAmount_txt.setAutoDraw(false);
        p_reward_score_txt.setAutoDraw(false);
        p_reward_rewardAmountBg_img.setAutoDraw(false);
        p_reward_mushroom_img.setAutoDraw(false);
    TextComponent p_reward_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine p_failStep1
    RoutineSettingsComponent p_failStep1
      saveStartStop = False
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    CodeComponent p_failStep1_image_code
      Code Type = JS
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      Begin JS Routine:
        p_failStep1_bg_img.setAutoDraw(true);
        p_failStep1_leftStim_img.setAutoDraw(true);
        p_failStep1_rightStim_img.setAutoDraw(true);
        p_failStep1_scoreBg_img.setAutoDraw(true);
        p_failStep1_score_txt.setAutoDraw(true);
        p_failStep1_tooSlow_img.setAutoDraw(true);
      End JS Routine:
        p_failStep1_bg_img.setAutoDraw(false);
        p_failStep1_leftStim_img.setAutoDraw(false);
        p_failStep1_rightStim_img.setAutoDraw(false);
        p_failStep1_scoreBg_img.setAutoDraw(false);
        p_failStep1_score_txt.setAutoDraw(false);
        p_failStep1_tooSlow_img.setAutoDraw(false);
    TextComponent p_failStep1_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent p_failStep1_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_failStep2
    RoutineSettingsComponent p_failStep2
      saveStartStop = False
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    CodeComponent p_failStep2_image_code
      Code Type = JS
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      Begin JS Routine:
        p_failStep2_bg_img.setAutoDraw(true);
        p_failStep2_stim_img.setAutoDraw(true);
        p_failStep2_scoreBg_img.setAutoDraw(true);
        p_failStep2_score_txt.setAutoDraw(true);
        p_failStep2_tooSlow_img.setAutoDraw(true);
      End JS Routine:
        p_failStep2_bg_img.setAutoDraw(false);
        p_failStep2_stim_img.setAutoDraw(false);
        p_failStep2_scoreBg_img.setAutoDraw(false);
        p_failStep2_score_txt.setAutoDraw(false);
        p_failStep2_tooSlow_img.setAutoDraw(false);
    TextComponent p_failStep2_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent p_failStep2_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_data
    RoutineSettingsComponent p_data
      saveStartStop = False
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    CodeComponent p_data_code
      Code Type = JS
      Begin JS Routine:
        psychoJS.experiment.addData("p_step1_pair_index", pair_index);
        psychoJS.experiment.addData("p_step1_stimLeft_name", p_step1_stimLeft_var["name"]);
        psychoJS.experiment.addData("p_step1_stimLeft_pair", p_step1_stimLeft_var["pair"]);
        psychoJS.experiment.addData("p_step1_stimLeft_reward", p_step1_stimLeft_var["step2"]["reward"][p_index]);
        psychoJS.experiment.addData("p_step1_stimLeft_step2Stim", p_step1_stimLeft_var["step2"]["name"]);
        psychoJS.experiment.addData("p_step1_stimLeft_step2Basket", p_step1_stimLeft_var["step2"]["basket_name"]);
        psychoJS.experiment.addData("p_step1_stimRight_name", p_step1_stimRight_var["name"]);
        psychoJS.experiment.addData("p_step1_stimRight_pair", p_step1_stimRight_var["pair"]);
        psychoJS.experiment.addData("p_step1_stimRight_reward", p_step1_stimRight_var["step2"]["reward"][p_index]);
        psychoJS.experiment.addData("p_step1_stimRight_step2Stim", p_step1_stimRight_var["step2"]["name"]);
        psychoJS.experiment.addData("p_step1_stimRight_step2Basket", p_step1_stimRight_var["step2"]["basket_name"]);
        psychoJS.experiment.addData("p_points", p_points);
        psychoJS.experiment.addData("t_mult", p_mult);
        psychoJS.experiment.addData("p_fail_step1", p_failStep1_flag);
        psychoJS.experiment.addData("p_fail_step2", p_failStep2_flag);
        psychoJS.experiment.addData("p_reward_flag", p_reward_flag);
        psychoJS.experiment.addData("p_step1_choice", p_step1_choice["name"]);
        psychoJS.experiment.addData("p_step2_stim", p_step2_stim_var["name"]);
        psychoJS.experiment.addData("p_step2_basket", p_step2_stim_var["basket_name"]);
        psychoJS.experiment.addData("p_score", p_score);
        p_index += 1;
  Routine t_instructions
    RoutineSettingsComponent t_instructions
      saveStartStop = False
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    ImageComponent t_instructions_img
      image = ressources/t_instructions_1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent t_instructions_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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  Routine pl2_instructions
    RoutineSettingsComponent pl2_instructions
      saveStartStop = False
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    ImageComponent pl2_instructions_img
      image = ressources/pl2_instructions.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent pl2_instructions_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine pl1_setup
    RoutineSettingsComponent pl1_setup
      saveStartStop = False
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    CodeComponent pl1_setup_code
      Code Type = JS
      Begin JS Routine:
        pl2_task_step2_index = [stimLeft_index, stimRight_index];
        shuffleArray(pl2_task_step2_index);
        pl2_task_stimLeft_var = l_t_step1_stims[pl2_task_step2_index[0]];
        pl2_task_stimRight_var = l_t_step1_stims[pl2_task_step2_index[1]];
  Routine pl1_task
    RoutineSettingsComponent pl1_task
      saveStartStop = False
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    SliderComponent pl1_task_lickert
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ["0\n(never together)", "100\n(always together)"]
      letterHeight = 0.05
      pos = (0, -.19)
      saveStartStop = False
      size = (1., .05)
      startVal [time (s)] = .5
      styles = rating
      ticks = (0, 100)
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    SliderComponent pl1_task_confidence_lickert
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ["0\n(not confident at all)", "100\n(very confident)"]
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      size = (1., .05)
      startVal [time (s)] = .5
      styles = rating
      ticks = (0, 100)
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    ImageComponent pl1_task_stimLeft_img
      anchor = bottom-center
      image [set every repeat] = $pl2_task_stimLeft_var["file"]
      pos = pl2_task_stimLeft_pos
      saveStartStop = False
      size = pl_step1_stim_size
      startVal [time (s)] = .5
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    ImageComponent pl1_task_stimRight_img
      anchor = bottom-center
      image [set every repeat] = $pl2_task_stimRight_var["file"]
      pos = pl2_task_stimRight_pos
      saveStartStop = False
      size = pl_step1_stim_size
      startVal [time (s)] = .5
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    KeyboardComponent pl1_task_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .5
      syncScreenRefresh = False
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    TextComponent pl1_task_fixation_txt
      letterHeight = 0.30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine pl1_data
    RoutineSettingsComponent pl1_data
      saveStartStop = False
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    CodeComponent pl1_data_code
      Code Type = JS
      Begin JS Routine:
        psychoJS.experiment.addData("pl1_task_stimLeft", pl2_task_stimLeft_var["name"]);
        psychoJS.experiment.addData("pl1_task_stimRight", pl2_task_stimRight_var["name"]);
  Routine pl2_setup
    RoutineSettingsComponent pl2_setup
      saveStartStop = False
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    CodeComponent pl2_setup_code
      Code Type = JS
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      Begin JS Routine:
        pl2_task_gnome_var = l_t_step1_stims[gnome_id]
        pl2_task_forest_var = l_t_step2_stims[forest_id]
  Routine pl2_data
    RoutineSettingsComponent pl2_data
      saveStartStop = False
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    CodeComponent pl2_data_code
      Code Type = JS
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      Begin JS Routine:
        pl2_task_gnome_var = l_t_step1_stims[gnome_id]
        pl2_task_forest_var = l_t_step2_stims[forest_id]



        psychoJS.experiment.addData("pl2_task_gnome", pl2_task_gnome_var["name"]);
        psychoJS.experiment.addData("pl2_task_forest", pl2_task_forest_var["name"]);
        psychoJS.experiment.addData("pl2_task_basket", pl2_task_forest_var["basket_name"]);
        psychoJS.experiment.addData("pl2_task_lickert.response", pl2_task_lickert.getRating());
        psychoJS.experiment.addData("pl2_task_lickert.rt", pl2_task_lickert.getRT());
        psychoJS.experiment.addData("pl2_task_confidence_lickert.response", pl2_task_confidence_lickert.getRating());
        psychoJS.experiment.addData("pl2_task_confidence_lickert.rt", pl2_task_confidence_lickert.getRT());
  Routine pl2_task
    RoutineSettingsComponent pl2_task
      saveStartStop = False
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    SliderComponent pl2_task_lickert
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ["0\n(never led to)", "100\n(always led to)"]
      letterHeight = 0.05
      pos = (0, -.19)
      saveStartStop = False
      size = (1., .05)
      startVal [time (s)] = .5
      styles = rating
      ticks = (0, 100)
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    SliderComponent pl2_task_confidence_lickert
      color = White
      flip = True
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = ["0\n(not confident at all)", "100\n(very confident)"]
      letterHeight = 0.05
      pos = (0, -.45)
      saveStartStop = False
      size = (1., .05)
      startVal [time (s)] = .5
      styles = rating
      ticks = (0, 100)
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    ImageComponent pl2_task_gnome_img
      anchor = bottom-center
      image [set every repeat] = $pl2_task_gnome_var["file"]
      pos = pl2_task_stimLeft_pos
      saveStartStop = False
      size = pl_step1_stim_size
      startVal [time (s)] = .5
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    KeyboardComponent pl2_task_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      syncScreenRefresh = False
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    ImageComponent pl2_task_forest_img
      anchor = bottom-center
      image [set every repeat] = $pl2_task_forest_var["file"]
      pos = pl2_task_stimRight_pos
      saveStartStop = False
      size = pl2_forest_size
      startVal [time (s)] = .5
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    ImageComponent pl2_task_basket_img
      anchor = bottom-center
      image [set every repeat] = $pl2_task_forest_var["basket_file"]
      pos = pl2_task_stimRight_pos
      saveStartStop = False
      size = pl2_basket_size
      startVal [time (s)] = .5
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    TextComponent pl2_task_fixation_txt
      letterHeight = 0.30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine global_instructions_1
    RoutineSettingsComponent global_instructions_1
      saveStartStop = False
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    ImageComponent global_instructions1_img
      image = ressources/global_instruction_1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent global_instructions1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine global_instructions_2
    RoutineSettingsComponent global_instructions_2
      saveStartStop = False
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    ImageComponent global_instructions2_img
      image = ressources/global_instruction_2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent global_instructions2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine global_instructions_3
    RoutineSettingsComponent global_instructions_3
      saveStartStop = False
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    ImageComponent global_instructions3_img
      image = ressources/global_instruction_3.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent global_instructions3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine global_instructions_4
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
  Routine global_instructions5
    RoutineSettingsComponent global_instructions5
      saveStartStop = False
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    ImageComponent global_instructions5_img
      image = ressources/global_instruction_5.PNG
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent global_instructions5_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine pl_global_instructions
    RoutineSettingsComponent pl_global_instructions
      saveStartStop = False
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    ImageComponent pl_global_instructions_img
      image = ressources/pl_global_instructions.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent pl_global_instructions_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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
  Routine pl1_instructions_1
    RoutineSettingsComponent pl1_instructions_1
      saveStartStop = False
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    ImageComponent pl1_instructions1_img
      image = ressources/pl1_instructions_1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent pl1_instructions1_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine pl1_instructions_2
    RoutineSettingsComponent pl1_instructions_2
      saveStartStop = False
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    ImageComponent pl1_instructions2_img
      image = ressources/pl1_instructions_2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent pl1_instructions2_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine pl1_instructions_3
    RoutineSettingsComponent pl1_instructions_3
      saveStartStop = False
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    ImageComponent pl1_instructions3_img
      image = ressources/pl1_instructions_3.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent pl1_instructions3_keyresp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_fixation_2
    RoutineSettingsComponent p_fixation_2
      stopVal [duration (s)] = .5
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    CodeComponent p_fixation_image_code
      Code Type = JS
      Begin JS Routine:
        p_step1_bg_img.setAutoDraw(true);
        p_step1_scoreBg_img.setAutoDraw(true);
        p_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        p_step1_bg_img.setAutoDraw(false);
        p_step1_scoreBg_img.setAutoDraw(false);
        p_step1_score_txt.setAutoDraw(false);
    TextComponent p_fixation_mandatory2_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine t_countdown
    RoutineSettingsComponent t_countdown
      saveStartStop = False
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    TextComponent t_countdown_3_txt
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = 3
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    TextComponent t_countdown_2_txt
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = .5
      stopVal [duration (s)] = .5
      text = 2
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    TextComponent t_countdown_1_txt
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
      text = 1
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  Routine pl1_instructions_4
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  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    KeyboardComponent consent_keyresp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent consent_code
      Code Type = JS
      Begin JS Routine:
        flag_consent = false;
        flag_no_consent = false;
      End JS Routine:
        if ((consent_keyresp.keys === "y")) {
            flag_consent = true;
        } else {
            flag_no_consent = true;
        }
    ImageComponent consent_img
      image = ressources/consent.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine no_consent_screen
    RoutineSettingsComponent no_consent_screen
      saveStartStop = False
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    TextComponent no_consent_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We acknowledge that you chose not to participate in the experiment.
        Your decision is respected, and your data will not be used.
        If you have any questions, feel free to reach out. Thank you.

        Please press "escape" and close the tab to end the experiment.
  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    TextComponent end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We thank you for your participation in this experiment!

        Your Prolific completion code: C1KDRF07

        Press "space" to get back to the main Prolific webpage
    KeyboardComponent end_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine t_fixation
    RoutineSettingsComponent t_fixation
      saveStartStop = False
      stopVal [duration (s)] = .5
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    TextComponent t_fixation_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent t_fixation_image_code
      Code Type = JS
      Begin JS Routine:
        t_step1_bg_img.setAutoDraw(true);
        t_step1_scoreBg_img.setAutoDraw(true);
        t_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        t_step1_bg_img.setAutoDraw(false);
        t_step1_scoreBg_img.setAutoDraw(false);
        t_step1_score_txt.setAutoDraw(false);
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  Routine t_instructions_2
    RoutineSettingsComponent t_instructions_2
      saveStartStop = False
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    ImageComponent t_instructions_2_img
      image = ressources/t_instructions_2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent t_instructions_2_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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
  Routine ITS
    RoutineSettingsComponent ITS
      saveStartStop = False
      stopVal [duration (s)] = .5
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    TextComponent ITS_mandatory_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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  Routine t_break
    RoutineSettingsComponent t_break
      saveStartStop = False
      stopVal [duration (s)] = 300
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    CodeComponent t_break_code
      Code Type = JS
      Begin JS Experiment:
        myClock = new util.Clock();
      Begin JS Routine:
        initialTime = 150;
        myClock.reset();
        myClock.add(initialTime);
        oldTime = initialTime;
        t_break_clock_text.setAutoDraw(true);
      Each JS Frame:
        newTime = initialTime - myClock.getTime();
        mins = Math.floor((newTime / 60));
        secs = (newTime % 60);
        if ((newTime !== oldTime)) {
            t_break_clock_text.text = ((Number.parseInt(mins).toString().padStart(1,"0") + ":") + Number.parseInt(secs).toString().padStart(2,"0"));
          oldTime = newTime;
        }
      End JS Routine:
        t_break_clock_text.setAutoDraw(false);
    KeyboardComponent break_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent t_break_img
      image = ressources/break.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent t_break_clock_text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = [0.7, 0.38]
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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  Routine stake_instructions
    RoutineSettingsComponent stake_instructions
      saveStartStop = False
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    ImageComponent stake_instructions_img
      image = ressources/stake_instructions.png
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent stake_instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine p_stake
    RoutineSettingsComponent p_stake
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent p_stake_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent p_stake_code
      Code Type = JS
      Begin JS Routine:
        p_stake_img.setAutoDraw(true);
        p_step1_bg_img.setAutoDraw(true);
        p_step1_scoreBg_img.setAutoDraw(true);
        p_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        p_stake_img.setAutoDraw(false);
        p_step1_bg_img.setAutoDraw(false);
        p_step1_scoreBg_img.setAutoDraw(false);
        p_step1_score_txt.setAutoDraw(false);
  Routine t_stake
    RoutineSettingsComponent t_stake
      saveStartStop = False
      stopVal [duration (s)] = 1
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    CodeComponent t_stake_code
      Code Type = JS
      Begin JS Routine:
        t_stake_img.setAutoDraw(true);
        t_step1_bg_img.setAutoDraw(true);
        t_step1_scoreBg_img.setAutoDraw(true);
        t_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        t_stake_img.setAutoDraw(false);
        t_step1_bg_img.setAutoDraw(false);
        t_step1_scoreBg_img.setAutoDraw(false);
        t_step1_score_txt.setAutoDraw(false);
    TextComponent t_stake_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine obs_setup
    RoutineSettingsComponent obs_setup
      saveStartStop = False
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    CodeComponent obs_setup_code
      Code Type = JS
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      Begin JS Routine:
        obs_step1_deact_img = "ressources/mush0.jpg";

        // fetching data from .csv (obsInfo.trialList[obs_counter]["VARIABLE_NAME"])

        obs_mult = obsInfo.trialList[obs_counter]["t_mult"];

        obs_mult_img = (("ressources/t_mult" + obs_mult.toString() + "_img.png"));

        obs_step1_stimRight_file = obsInfo.trialList[obs_counter]["stimRight_filename"];
        obs_step1_stimLeft_file = obsInfo.trialList[obs_counter]["stimLeft_filename"];
        obs_step1_stimRightDeact_file = obsInfo.trialList[obs_counter]["stimRight_deact_filename"];
        obs_step1_stimLeftDeact_file = obsInfo.trialList[obs_counter]["stimLeft_deact_filename"];

        obs_step1_RT = obsInfo.trialList[obs_counter]["t_step1_keyresp.rt"];
        obs_keyresp = obsInfo.trialList[obs_counter]["t_step1_keyresp.keys"];

        obs_step2_forest_file = obsInfo.trialList[obs_counter]["forest_filename"];
        obs_step2_basket_file = obsInfo.trialList[obs_counter]["basket_filename"];
        obs_step2_forest_file_deact = ((obs_step2_forest_file.substring(0, obs_step2_forest_file.length - 4) + "_deact.png"));

        obs_step2_RT = obsInfo.trialList[obs_counter]["t_step2_keyresp.rt"];

        obs_points = obsInfo.trialList[obs_counter]["t_points"]

        //IMG SETUP

        // STEP 1

        obs_stake_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_stake_img', units : 'norm',
            image : obs_mult_img, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [0.32, 0.55],
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        obs_step1_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step1_bg_img', units : 'norm',
            image : 'ressources/step1_background.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        obs_step1_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step1_leftStim_img', units : undefined,
            image : obs_step1_stimLeft_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimLeft_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_step1_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step1_rightStim_img', units : undefined,
            image : obs_step1_stimRight_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step1_stimRight_pos, size : global_step1_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        obs_step1_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step1_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });

        obs_step1_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'obs_step1_score_txt',
            text: "SCORE: " + obs_score.toString(), //obs score is define in the general setup
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });

        // HIGHLIGHT

        obs_step1_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step1_highlight_img', units : 'height',
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : undefined, size : global_highlight_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });


        //STEP2

        obs_step2_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step2_bg_img', units : 'norm',
            image : obs_step2_forest_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
          });

        obs_step2_stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step2_stim_img', units : 'height',
            image : obs_step2_basket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_step2_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step2_highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        obs_step2_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_step2_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        obs_step2_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'obs_step2_score_txt',
            text: 'SCORE: ' + obs_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });

        // REWARD

        r_points = obs_points / obs_mult;
        obs_reward_mushroom_img = (("ressources/mush" + r_points.toString()) + ".png");
        obs_reward_trialPoints_txt = ("+" + obs_points.toString());

        obs_reward_bg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_reward_bg_img', units : 'norm',
            image : obs_step2_forest_file, mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : [0, 0], size : [2, 2],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : 0.0
        });

        obs_reward_step2Stim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_reward_step2Stim_img', units : 'height',
            image : obs_step2_basket_file, mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_pos, size : global_step2_stim_size,
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -1.0
        });

        obs_reward_step2Highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_reward_step2Highlight_img', units : undefined,
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_step2_highlight_pos, size : [0.6, 0.6],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -2.0
        });

        obs_reward_scoreBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_reward_scoreBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : global_scoreBg_pos, size : global_scoreBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_reward_rewardAmount_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'obs_reward_rewardAmount_txt',
            text: obs_reward_trialPoints_txt,
            font: 'Open Sance',
            units: undefined,
            pos: [0, 0.35], height: 0.25,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -4.0
        });

        obs_reward_rewardAmountBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_reward_rewardAmountBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'center',
            ori : 0.0, pos : global_rewardBg_pos, size : global_rewardBg_size,
            color : new util.Color([0, 0, 0]), opacity : 0.6,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_reward_mushroom_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 't_reward_mushroom_img', units : undefined,
            image : obs_reward_mushroom_img,
            mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [0, 0.2], size : [0.5, 0.5],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -7.0
        });

        // attention check

        obs_attention_check_flag = 0;
        obs_attention_check_mistake_flag = 0;
        obs_attention_check_no_answer_flag = 0;
        obs_attention_check_step1_flag = 0;
        obs_attention_check_step2_flag = 0;
        obs_attention_check_step2_no_answer_flag = 0;
        obs_attention_check_step2_mistake_flag = 0;

        if (obs_attention_check_trial.includes(obs_counter)) {
            obs_attention_check_flag = 1;
            obs_attention_check_type_flag = obs_attention_check_trial_type[obs_attention_check_counter];
            if (obs_attention_check_type_flag === "step1"){
                obs_attention_check_step1_flag = 1;
            } else{
                obs_attention_check_step2_flag = 1;
            }
            obs_attention_check_counter = obs_attention_check_counter + 1;
        }

        if (obs_points <= 5){
            good_answer = "s";
        } else{
            good_answer = "k";
        }


        //console.log(obs_counter);

        obs_attention_check_step1_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step1_img', units : undefined,
            image : 'ressources/obs_attention_check_step1.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : p_tooSlow_pos, size : p_tooSlow_size,
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_attention_check_step2_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_img', units : undefined,
            image : 'ressources/obs_attention_check_step2.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : p_tooSlow_pos, size : p_tooSlow_size,
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_attention_check_step2_leftStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_leftStim_img', units : undefined,
            image : "ressources/mush3.png", mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [-.5, -.22], size : [0.4, 0.4],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });

        obs_attention_check_step2_rightStim_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_rightStim_img', units : undefined,
            image : "ressources/mush9.png", mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [.5, -.22], size : [0.4, 0.4],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -4.0
        });

        obs_attention_check_step2_highlight_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_highlight_img', units : 'height',
            image : 'ressources/highlight.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : undefined, size : [0.65, 0.65],
            color : new util.Color([1,1,1]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -5.0
        });

        obs_attention_check_step2_right_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'obs_attention_check_step2_right_txt',
            text: ">5",
            font: 'Open Sans',
            units: undefined,
            pos: [.5, -.12], height: 0.1,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });

        obs_attention_check_step2_left_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 'obs_attention_check_step2_left_txt',
            text: "≤5",
            font: 'Open Sans',
            units: undefined,
            pos: [-.5, -.12], height: 0.1,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -7.0
        });

        obs_attention_check_step2_right_txtBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_right_txtBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [.5, -.07], size : [0.2, 0.1],
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });

        obs_attention_check_step2_left_txtBg_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_attention_check_step2_left_txtBg_img', units : undefined,
            image : 'ressources/grey_rectangle.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : [-.5, -.07], size : [0.2, 0.1],
            color : new util.Color([0, 0, 0]), opacity : 0.9,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -6.0
        });


        // WRONG

        obs_AC_incorrect_img = new visual.ImageStim({
            win : psychoJS.window,
            name : 'obs_AC_incorrect_img', units : undefined,
            image : 'ressources/incorrect.png', mask : undefined,
            anchor : 'top-center',
            ori : 0.0, pos : p_tooSlow_pos, size : [1.27, 0.3],
            color : new util.Color([0, 0, 0]), opacity : undefined,
            flipHoriz : false, flipVert : false,
            texRes : 128.0, interpolate : true, depth : -3.0
        });
  Routine obs_fixation
    RoutineSettingsComponent obs_fixation
      saveStartStop = False
      stopVal [duration (s)] = .5
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    TextComponent obs_fixation_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent obs_fixation_image_code
      Code Type = JS
      Begin JS Routine:
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_scoreBg_img.setAutoDraw(true);
        obs_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_scoreBg_img.setAutoDraw(false);
        obs_step1_score_txt.setAutoDraw(false);
  Routine obs_stake
    RoutineSettingsComponent obs_stake
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent obs_stake_mandatory_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent obs_stake_code
      Code Type = JS
      Begin JS Routine:
        obs_stake_img.setAutoDraw(true);
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_scoreBg_img.setAutoDraw(true);
        obs_step1_score_txt.setAutoDraw(true);
      End JS Routine:
        obs_stake_img.setAutoDraw(false);
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_scoreBg_img.setAutoDraw(false);
        obs_step1_score_txt.setAutoDraw(false);
  Routine obs_step1
    RoutineSettingsComponent obs_step1
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent obs_step1_image_code
      Code Type = JS
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      Begin JS Routine:
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_leftStim_img.setAutoDraw(true);
        obs_step1_rightStim_img.setAutoDraw(true);
        obs_step1_scoreBg_img.setAutoDraw(true);
        obs_step1_score_txt.setAutoDraw(true);

        timer = new util.Clock();
      Each JS Frame:
        if (timer.getTime() >= obs_step1_RT) {
            if ((obs_keyresp === "s")) {
                obs_step1_highlight_img.setPos([(-0.5), 0.19]);
                obs_step1_rightStim_img.setImage(obs_step1_stimRightDeact_file);
                obs_step1_rightStim_img.setAutoDraw(true);
            } else {
                obs_step1_highlight_img.setPos([(0.5), 0.19]);
                obs_step1_leftStim_img.setImage(obs_step1_stimLeftDeact_file);
                obs_step1_leftStim_img.setAutoDraw(true);
            }
            obs_step1_highlight_img.setAutoDraw(true)
        }
      End JS Routine:
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_leftStim_img.setAutoDraw(false);
        obs_step1_rightStim_img.setAutoDraw(false);
        obs_step1_highlight_img.setAutoDraw(false);
        obs_step1_scoreBg_img.setAutoDraw(false);
        obs_step1_score_txt.setAutoDraw(false);

        // reset image for attention check
        obs_step1_rightStim_img.setImage(obs_step1_stimRight_file);
        obs_step1_leftStim_img.setImage(obs_step1_stimLeft_file);
    TextComponent obs_step1_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine obs_step2
    RoutineSettingsComponent obs_step2
      saveStartStop = False
      stopVal [duration (s)] = 1.5
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    CodeComponent obs_step2_code
      Code Type = JS
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      End JS Routine:
        obs_score = (obs_score + obs_points);

        obs_reward_score_txt = new visual.TextStim({
            win: psychoJS.window,
            name: 't_reward_score_txt',
            text: "SCORE: " + obs_score.toString(),
            font: 'Open Sans',
            units: undefined,
            pos: global_score_pos, height: global_score_size,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color('white'),  opacity: undefined,
            depth: -6.0
        });
    CodeComponent obs_step2_image_code
      Code Type = JS
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      Begin JS Routine:
        obs_step2_bg_img.setAutoDraw(true);
        obs_step2_stim_img.setAutoDraw(true);
        obs_step2_scoreBg_img.setAutoDraw(true);
        obs_step2_score_txt.setAutoDraw(true);

        timer = new util.Clock();
      Each JS Frame:
        if (timer.getTime() >= obs_step2_RT) {
            obs_step2_highlight_img.setAutoDraw(true)
        }
      End JS Routine:
        obs_step2_bg_img.setAutoDraw(false);
        obs_step2_stim_img.setAutoDraw(false);
        obs_step2_highlight_img.setAutoDraw(false);
        obs_step2_scoreBg_img.setAutoDraw(false);
        obs_step2_score_txt.setAutoDraw(false);
    TextComponent obs_step2_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine obs_reward
    RoutineSettingsComponent obs_reward
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent obs_reward_image_code
      Code Type = JS
      Begin JS Routine:
        obs_reward_bg_img.setAutoDraw(true);
        obs_reward_step2Stim_img.setAutoDraw(true);
        obs_reward_step2Highlight_img.setAutoDraw(true);
        obs_reward_scoreBg_img.setAutoDraw(true);
        obs_reward_rewardAmountBg_img.setAutoDraw(true);
        obs_reward_rewardAmount_txt.setAutoDraw(true);
        obs_reward_score_txt.setAutoDraw(true);
        obs_reward_mushroom_img.setAutoDraw(true);
      End JS Routine:
        obs_reward_bg_img.setAutoDraw(false);
        obs_reward_step2Stim_img.setAutoDraw(false);
        obs_reward_step2Highlight_img.setAutoDraw(false);
        obs_reward_scoreBg_img.setAutoDraw(false);
        obs_reward_rewardAmountBg_img.setAutoDraw(false);
        obs_reward_rewardAmount_txt.setAutoDraw(false);
        obs_reward_score_txt.setAutoDraw(false);
        obs_reward_mushroom_img.setAutoDraw(false);

        obs_counter = obs_counter + 1;
    TextComponent obs_reward_mandatory_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fail_attention_check_screen
    RoutineSettingsComponent fail_attention_check_screen
      saveStartStop = False
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We are sorry to inform you that you failed the attention check.
        You have been excluded from this experiment.
        We ask you kindly to return your submission on the prolific website.
        If you have any questions, feel free to reach out. Thank you.

        Please press "escape" and close the tab to end the experiment.
  Routine obs_attention_check_step1
    RoutineSettingsComponent obs_attention_check_step1
      saveStartStop = False
      stopVal [duration (s)] = 5
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    CodeComponent obs_attention_check_step1_code
      Code Type = JS
      Begin JS Routine:
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_leftStim_img.setAutoDraw(true);
        obs_step1_rightStim_img.setAutoDraw(true);
        obs_attention_check_step1_img.setAutoDraw(true);
      Each JS Frame:
        if (_obs_attention_check_step1_keyresp_allKeys.length > 0) {
            if ((obs_attention_check_step1_keyresp.keys === "s")) {
                obs_step1_highlight_img.setPos([(-0.5), 0.19]);
                obs_step1_rightStim_img.setImage(obs_step1_stimRightDeact_file);
                obs_step1_highlight_img.setAutoDraw(true);
                obs_step1_rightStim_img.setAutoDraw(true);
            } else {
                obs_step1_highlight_img.setPos([0.5, 0.19]);
                obs_step1_leftStim_img.setImage(obs_step1_stimLeftDeact_file);
                obs_step1_highlight_img.setAutoDraw(true);
                obs_step1_leftStim_img.setAutoDraw(true);
            }
        }
      End JS Routine:
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_leftStim_img.setAutoDraw(false);
        obs_step1_rightStim_img.setAutoDraw(false);
        obs_step1_highlight_img.setAutoDraw(false);
        obs_attention_check_step1_img.setAutoDraw(false);

        if (_obs_attention_check_step1_keyresp_allKeys.length > 0) {
            if (obs_attention_check_step1_keyresp.keys !== obs_keyresp){
                obs_attention_check_fail = obs_attention_check_fail + 1;
                obs_attention_check_mistake_flag = 1;
                obs_step1_bg_img.setImage("ressources/step1_background_deact.png");
                if (obs_attention_check_step1_keyresp.keys === "s"){ // if answer was k (right)
                    obs_step1_rightStim_img.setImage(obs_step1_stimRight_file);
                    obs_step1_leftStim_img.setImage(obs_step1_stimLeftDeact_file);
                } else{
                    obs_step1_rightStim_img.setImage(obs_step1_stimRightDeact_file);
                    obs_step1_leftStim_img.setImage(obs_step1_stimLeft_file);
                }
            }
        } else{
            obs_attention_check_fail = obs_attention_check_fail + 1;
            obs_attention_check_no_answer_flag = 1;
            obs_step1_bg_img.setImage("ressources/step1_background_deact.png");
            obs_step1_leftStim_img.setImage(obs_step1_stimLeftDeact_file);
            obs_step1_rightStim_img.setImage(obs_step1_stimRightDeact_file);
        }
    TextComponent obs_attention_check_step1_mandatory_TXT
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent obs_attention_check_step1_keyresp
      allowedKeys = 's','k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = first key
      syncScreenRefresh = False
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  Routine obs_attention_check_step1_mistake
    RoutineSettingsComponent obs_attention_check_step1_mistake
      saveStartStop = False
      stopVal [duration (s)] = 5
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    CodeComponent obs_attention_check_step1_mistake_code
      Code Type = JS
      Begin JS Routine:
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_leftStim_img.setAutoDraw(true);
        obs_step1_rightStim_img.setAutoDraw(true);
        obs_step1_highlight_img.setAutoDraw(true);
        obs_AC_incorrect_img.setAutoDraw(true);
      End JS Routine:
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_leftStim_img.setAutoDraw(false);
        obs_step1_rightStim_img.setAutoDraw(false);
        obs_step1_highlight_img.setAutoDraw(false);
        obs_AC_incorrect_img.setAutoDraw(false);
    TextComponent obs_attention_check_step1_mistake_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine obs_attention_check_step1_no_answer
    RoutineSettingsComponent obs_attention_check_step1_no_answer
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent obs_attention_check_step1_no_answer_code
      Code Type = JS
      Begin JS Routine:
        obs_step1_bg_img.setAutoDraw(true);
        obs_step1_leftStim_img.setAutoDraw(true);
        obs_step1_rightStim_img.setAutoDraw(true);
        obs_AC_incorrect_img.setAutoDraw(true);
      End JS Routine:
        obs_step1_bg_img.setAutoDraw(false);
        obs_step1_leftStim_img.setAutoDraw(false);
        obs_step1_rightStim_img.setAutoDraw(false);
        obs_AC_incorrect_img.setAutoDraw(false);
    TextComponent obs_attention_check_step1_no_answer_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine obs_data
    RoutineSettingsComponent obs_data
      saveStartStop = False
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    CodeComponent obs_data_code
      Code Type = JS
      Begin JS Routine:
        if (obs_attention_check_fail > 5) {
            obs.finished = true;
            attention_check_flag = 0;
            show_fail_AC_flag = 1;
        }
      End JS Routine:
        psychoJS.experiment.addData("obs_stim_left", obs_step1_stimLeft_file);
        psychoJS.experiment.addData("obs_stim_right", obs_step1_stimRight_file);
        psychoJS.experiment.addData("obs_step1_key", obs_keyresp);
        psychoJS.experiment.addData("obs_step1_RT", obs_step1_RT);
        psychoJS.experiment.addData("obs_step2_forest", obs_step2_forest_file);
        psychoJS.experiment.addData("obs_step2_basket", obs_step2_basket_file);
        psychoJS.experiment.addData("obs_step2_RT", obs_step2_RT);
        psychoJS.experiment.addData("obs_mult", obs_mult);
        psychoJS.experiment.addData("obs_points", obs_points);
        psychoJS.experiment.addData("obs_score", obs_score);
        psychoJS.experiment.addData("obs_AC_flag", obs_attention_check_flag);
        psychoJS.experiment.addData("obs_AC_step1_flag", obs_attention_check_step1_flag);
        psychoJS.experiment.addData("obs_AC_step2_flag", obs_attention_check_step2_flag);
        psychoJS.experiment.addData("obs_AC_mistake_flag", obs_attention_check_mistake_flag);
        psychoJS.experiment.addData("obs_AC_no_answer_flag", obs_attention_check_no_answer_flag);
        psychoJS.experiment.addData("obs_AC_step2_no_answer_flag", obs_attention_check_step2_mistake_flag);
        psychoJS.experiment.addData("obs_AC_step2_no_answer_flag", obs_attention_check_step2_no_answer_flag);

        psychoJS.experiment.addData("obs_AC_counter", obs_attention_check_counter);
        psychoJS.experiment.addData("good_answer", good_answer);
        psychoJS.experiment.addData("obs_attention_check_fail", obs_attention_check_fail);
  Routine obs_attention_check_fixation
    RoutineSettingsComponent obs_attention_check_fixation
      saveStartStop = False
      stopVal [duration (s)] = 1
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    TextComponent obs_attention_check_fixation_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.3
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    TextComponent obs_attention_check_text_txt
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ATTENTION CHECK
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  Routine obs_attention_check_step2
    RoutineSettingsComponent obs_attention_check_step2
      saveStartStop = False
      stopVal [duration (s)] = 5
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    CodeComponent obs_attention_check_step2_code
      Code Type = JS
      Begin JS Routine:
        obs_attention_check_step2_img.setAutoDraw(true);
        obs_step2_bg_img.setAutoDraw(true);
        obs_attention_check_step2_leftStim_img.setAutoDraw(true);
        obs_attention_check_step2_rightStim_img.setAutoDraw(true);
        obs_attention_check_step2_left_txt.setAutoDraw(true);
        obs_attention_check_step2_right_txt.setAutoDraw(true);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(true);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(true);
      Each JS Frame:
        if (_obs_attention_check_step2_keyresp_allKeys.length > 0) {
            if ((obs_attention_check_step2_keyresp.keys === "s")) {
                obs_attention_check_step2_highlight_img.setPos([(-0.5), 0.1]);
                obs_attention_check_step2_rightStim_img.setImage("ressources/mush9_deact.png");
                obs_attention_check_step2_highlight_img.setAutoDraw(true);
                obs_attention_check_step2_rightStim_img.setAutoDraw(true);
            } else {
                obs_attention_check_step2_highlight_img.setPos([0.5, 0.1]);
                obs_attention_check_step2_leftStim_img.setImage("ressources/mush3_deact.png");
                obs_attention_check_step2_highlight_img.setAutoDraw(true);
                obs_attention_check_step2_leftStim_img.setAutoDraw(true);
            }
        }
      End JS Routine:
        obs_attention_check_step2_img.setAutoDraw(false);
        obs_step2_bg_img.setAutoDraw(false);
        obs_attention_check_step2_leftStim_img.setAutoDraw(false);
        obs_attention_check_step2_rightStim_img.setAutoDraw(false);
        obs_attention_check_step2_highlight_img.setAutoDraw(false);
        obs_attention_check_step2_left_txt.setAutoDraw(false);
        obs_attention_check_step2_right_txt.setAutoDraw(false);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(false);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(false);

        if (_obs_attention_check_step2_keyresp_allKeys.length > 0) {
            if (obs_attention_check_step2_keyresp.keys !== good_answer){
                obs_attention_check_fail = obs_attention_check_fail + 1;
                obs_attention_check_step2_mistake_flag = 1;
                obs_step2_bg_img.setImage(obs_step2_forest_file_deact);
                if (obs_attention_check_step2_keyresp.keys === "s"){ // if answer was k (right)
                    obs_attention_check_step2_rightStim_img.setImage("ressources/mush9.png");
                    obs_attention_check_step2_leftStim_img.setImage("ressources/mush3_deact.png");
                } else{
                    obs_attention_check_step2_rightStim_img.setImage("ressources/mush9_deact.png")
                    obs_attention_check_step2_leftStim_img.setImage("ressources/mush3.png");
                }
            }
        } else{
            obs_attention_check_fail = obs_attention_check_fail + 1;
            obs_attention_check_step2_no_answer_flag = 1;
            obs_step2_bg_img.setImage(obs_step2_forest_file_deact);
            obs_attention_check_step2_leftStim_img.setImage("ressources/mush3_deact.png");
            obs_attention_check_step2_rightStim_img.setImage("ressources/mush9_deact.png");
        }
    TextComponent obs_attention_check_step2_mandatory_TXT
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent obs_attention_check_step2_keyresp
      allowedKeys = 's','k'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      store = first key
      syncScreenRefresh = False
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  Routine obs_instructions_1
    RoutineSettingsComponent obs_instructions_1
      saveStartStop = False
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    ImageComponent obs_instructions_1_img
      image = ressources/obs_instructions_1.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent obs_instructions_1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine obs_instructions_2
    RoutineSettingsComponent obs_instructions_2
      saveStartStop = False
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    ImageComponent obs_instructions_2_img
      image = ressources/obs_instructions_2.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent obs_instructions_2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine t_recording
    RoutineSettingsComponent t_recording
      stopVal [duration (s)] = 10
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    ImageComponent t_recording_img
      image = ressources/t_recording.PNG
      saveStartStop = False
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine obs_attention_check_step2_mistake
    RoutineSettingsComponent obs_attention_check_step2_mistake
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent obs_attention_check_step2_mistake_code
      Code Type = JS
      Begin JS Routine:
        obs_step2_bg_img.setAutoDraw(true);
        obs_attention_check_step2_leftStim_img.setAutoDraw(true);
        obs_attention_check_step2_rightStim_img.setAutoDraw(true);
        obs_attention_check_step2_left_txt.setAutoDraw(true);
        obs_attention_check_step2_right_txt.setAutoDraw(true);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(true);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(true);
        obs_attention_check_step2_highlight_img.setAutoDraw(true);
        obs_AC_incorrect_img.setAutoDraw(true);
      End JS Routine:
        obs_step2_bg_img.setAutoDraw(false);
        obs_attention_check_step2_leftStim_img.setAutoDraw(false);
        obs_attention_check_step2_rightStim_img.setAutoDraw(false);
        obs_attention_check_step2_left_txt.setAutoDraw(false);
        obs_attention_check_step2_right_txt.setAutoDraw(false);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(false);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(false);
        obs_attention_check_step2_highlight_img.setAutoDraw(false);
        obs_AC_incorrect_img.setAutoDraw(false);
    TextComponent obs_attention_check_step2_mistake_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine obs_attention_check_step2_no_answer
    RoutineSettingsComponent obs_attention_check_step2_no_answer
      saveStartStop = False
      stopVal [duration (s)] = 2
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    CodeComponent obs_attention_check_step2_no_answer_code
      Code Type = JS
      Begin JS Routine:
        obs_step2_bg_img.setAutoDraw(true);
        obs_attention_check_step2_leftStim_img.setAutoDraw(true);
        obs_attention_check_step2_rightStim_img.setAutoDraw(true);
        obs_attention_check_step2_left_txt.setAutoDraw(true);
        obs_attention_check_step2_right_txt.setAutoDraw(true);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(true);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(true);
        obs_AC_incorrect_img.setAutoDraw(true);
      End JS Routine:
        obs_step2_bg_img.setAutoDraw(false);
        obs_attention_check_step2_leftStim_img.setAutoDraw(false);
        obs_attention_check_step2_rightStim_img.setAutoDraw(false);
        obs_attention_check_step2_highlight_img.setAutoDraw(false);
        obs_attention_check_step2_left_txt.setAutoDraw(false);
        obs_attention_check_step2_right_txt.setAutoDraw(false);
        obs_attention_check_step2_left_txtBg_img.setAutoDraw(false);
        obs_attention_check_step2_right_txtBg_img.setAutoDraw(false);
        obs_AC_incorrect_img.setAutoDraw(false);
    TextComponent obs_attention_check_step2_no_answer_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine global_setup
  Routine consent
  LoopInitiator show_trials loopType="TrialHandler"
    loopType = random
    nReps = flag_consent
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    Routine global_instructions_1
    Routine global_instructions_2
    Routine global_instructions_3
    Routine global_instructions_4
    Routine stake_instructions
    Routine global_instructions5
    Routine t_countdown
    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = training_pairIndex.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('pair_index', 1), ('p_mult', 1)]),
        OrderedDict([('pair_index', 2), ('p_mult', 1)]),
        OrderedDict([('pair_index', 1), ('p_mult', 5)]),
        OrderedDict([('pair_index', 2), ('p_mult', 5)])]
      Routine p_setup
      Routine p_fixation_2
      Routine p_stake
      Routine p_step1
      LoopInitiator p_step2_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = p_step2_flag
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        Routine ITS
        Routine p_step2
      LoopTerminator p_step2_loop
      LoopInitiator p_reward_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = p_reward_flag
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        Routine p_reward
      LoopTerminator p_reward_loop
      LoopInitiator p_failStep1_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = p_failStep1_flag
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        Routine p_failStep1
      LoopTerminator p_failStep1_loop
      LoopInitiator p_failStep2_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = p_failStep2_flag
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        Routine p_failStep2
      LoopTerminator p_failStep2_loop
      Routine p_data
    LoopTerminator practice
    Routine obs_instructions_1
    Routine obs_instructions_2
    Routine t_countdown
    LoopInitiator obs loopType="TrialHandler"
      loopType = random
      nReps = obs_n_trial
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      Routine obs_setup
      Routine obs_fixation
      Routine obs_stake
      Routine obs_step1
      Routine ITS
      Routine obs_step2
      Routine obs_reward
      LoopInitiator obs_attention_check_loop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = obs_attention_check_flag
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        Routine obs_attention_check_fixation
        LoopInitiator obs_attention_check_step1_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = obs_attention_check_step1_flag
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          Routine obs_attention_check_step1
          LoopInitiator obs_attention_check_mistake_step1_loop loopType="TrialHandler"
            isTrials = False
            loopType = random
            nReps = obs_attention_check_mistake_flag
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            Routine obs_attention_check_step1_mistake
          LoopTerminator obs_attention_check_mistake_step1_loop
          LoopInitiator obs_attention_check_no_answer_step1_loop loopType="TrialHandler"
            isTrials = False
            loopType = random
            nReps = obs_attention_check_no_answer_flag 
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            Routine obs_attention_check_step1_no_answer
          LoopTerminator obs_attention_check_no_answer_step1_loop
        LoopTerminator obs_attention_check_step1_loop
        LoopInitiator obs_attention_check_step2_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = obs_attention_check_step2_flag
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          Routine obs_attention_check_step2
          LoopInitiator obs_attention_check_mistake_step2_loop loopType="TrialHandler"
            isTrials = False
            loopType = random
            nReps = obs_attention_check_step2_mistake_flag 
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            Routine obs_attention_check_step2_mistake
          LoopTerminator obs_attention_check_mistake_step2_loop
          LoopInitiator obs_attention_check_no_answer_step2_loop loopType="TrialHandler"
            isTrials = False
            loopType = random
            nReps = obs_attention_check_step2_no_answer_flag 
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            Routine obs_attention_check_step2_no_answer
          LoopTerminator obs_attention_check_no_answer_step2_loop
        LoopTerminator obs_attention_check_step2_loop
        Routine t_countdown
      LoopTerminator obs_attention_check_loop
      Routine obs_data
    LoopTerminator obs
    LoopInitiator passed_attention_check_loop loopType="TrialHandler"
      loopType = random
      nReps = attention_check_flag
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      Routine t_instructions
      Routine t_instructions_2
      Routine t_countdown
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = trials_pairIndex.csv
        loopType = fullRandom
        nReps = t_n_trial
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        conditions:
          [OrderedDict([('pair_index', 1), ('t_mult', 1)]),
          OrderedDict([('pair_index', 2), ('t_mult', 1)]),
          OrderedDict([('pair_index', 3), ('t_mult', 1)]),
          OrderedDict([('pair_index', 4), ('t_mult', 1)]),
          OrderedDict([('pair_index', 1), ('t_mult', 5)]),
          OrderedDict([('pair_index', 2), ('t_mult', 5)]),
          OrderedDict([('pair_index', 3), ('t_mult', 5)]),
          OrderedDict([('pair_index', 4), ('t_mult', 5)])]
        Routine t_setup
        Routine t_fixation
        Routine t_stake
        Routine t_step1
        LoopInitiator t_step2_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = t_step2_flag
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          Routine ITS
          Routine t_step2
        LoopTerminator t_step2_loop
        LoopInitiator t_reward_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = t_reward_flag
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          Routine t_reward
        LoopTerminator t_reward_loop
        LoopInitiator t_failStep1_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = t_failStep1_flag
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          Routine t_failStep1
        LoopTerminator t_failStep1_loop
        LoopInitiator t_failStep2_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = t_failStep2_flag
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          Routine t_failStep2
        LoopTerminator t_failStep2_loop
        Routine t_data
        LoopInitiator t_break_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = $t_break_flag
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          Routine t_break
          Routine t_countdown
        LoopTerminator t_break_loop
        LoopInitiator t_recording_loop loopType="TrialHandler"
          isTrials = False
          loopType = random
          nReps = t_recording_flag
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          Routine t_recording
          Routine t_countdown
        LoopTerminator t_recording_loop
      LoopTerminator trials
      Routine pl_global_instructions
      Routine pl1_instructions_1
      Routine pl1_instructions_2
      Routine pl1_instructions_3
      Routine pl1_instructions_4
      LoopInitiator pl1_loop loopType="TrialHandler"
        conditionsFile = pl1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'stimLeft_index': 0, 'stimRight_index': 1},
          {'stimLeft_index': 0, 'stimRight_index': 2},
          {'stimLeft_index': 0, 'stimRight_index': 3},
          {'stimLeft_index': 0, 'stimRight_index': 4},
          {'stimLeft_index': 0, 'stimRight_index': 5},
          {'stimLeft_index': 0, 'stimRight_index': 6},
          {'stimLeft_index': 0, 'stimRight_index': 7},
          {'stimLeft_index': 1, 'stimRight_index': 2},
          {'stimLeft_index': 1, 'stimRight_index': 3},
          {'stimLeft_index': 1, 'stimRight_index': 4},
          {'stimLeft_index': 1, 'stimRight_index': 5},
          {'stimLeft_index': 1, 'stimRight_index': 6},
          {'stimLeft_index': 1, 'stimRight_index': 7},
          {'stimLeft_index': 2, 'stimRight_index': 3},
          {'stimLeft_index': 2, 'stimRight_index': 4},
          {'stimLeft_index': 2, 'stimRight_index': 5},
          {'stimLeft_index': 2, 'stimRight_index': 6},
          {'stimLeft_index': 2, 'stimRight_index': 7},
          {'stimLeft_index': 3, 'stimRight_index': 4},
          {'stimLeft_index': 3, 'stimRight_index': 5},
          {'stimLeft_index': 3, 'stimRight_index': 6},
          {'stimLeft_index': 3, 'stimRight_index': 7},
          {'stimLeft_index': 4, 'stimRight_index': 5},
          {'stimLeft_index': 4, 'stimRight_index': 6},
          {'stimLeft_index': 4, 'stimRight_index': 7},
          {'stimLeft_index': 5, 'stimRight_index': 6},
          {'stimLeft_index': 5, 'stimRight_index': 7},
          {'stimLeft_index': 6, 'stimRight_index': 7}]
        Routine pl1_setup
        Routine pl1_task
        Routine pl1_data
      LoopTerminator pl1_loop
      Routine pl2_instructions
      LoopInitiator pl2_loop loopType="TrialHandler"
        conditionsFile = pl2.xlsx
        loopType = fullRandom
        nReps = 1
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        conditions:
          [{'gnome_id': 0, 'forest_id': 0},
          {'gnome_id': 0, 'forest_id': 1},
          {'gnome_id': 1, 'forest_id': 0},
          {'gnome_id': 1, 'forest_id': 1},
          {'gnome_id': 2, 'forest_id': 0},
          {'gnome_id': 2, 'forest_id': 1},
          {'gnome_id': 3, 'forest_id': 0},
          {'gnome_id': 3, 'forest_id': 1},
          {'gnome_id': 4, 'forest_id': 0},
          {'gnome_id': 4, 'forest_id': 1},
          {'gnome_id': 5, 'forest_id': 0},
          {'gnome_id': 5, 'forest_id': 1},
          {'gnome_id': 6, 'forest_id': 0},
          {'gnome_id': 6, 'forest_id': 1},
          {'gnome_id': 7, 'forest_id': 0},
          {'gnome_id': 7, 'forest_id': 1}]
        Routine pl2_setup
        Routine pl2_task
        Routine pl2_data
      LoopTerminator pl2_loop
      Routine end
    LoopTerminator passed_attention_check_loop
    LoopInitiator show_fail_AC loopType="TrialHandler"
      loopType = random
      nReps = show_fail_AC_flag
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      Routine fail_attention_check_screen
    LoopTerminator show_fail_AC
  LoopTerminator show_trials
  LoopInitiator show_no_consent loopType="TrialHandler"
    loopType = random
    nReps = flag_no_consent
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    Routine no_consent_screen
  LoopTerminator show_no_consent
